<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="chang_1999" cmeta:id="chang_1999">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>A kinetic model of the thiazide-sensitive Na-Cl cotransporter</title>
        <author>
          <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
          <affiliation>
            <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <section id="sec_status">
        <title>Model Status</title>
        <para>This CellML model runs in OpenCell and COR.  The units have ben checked and they are consistent.  We are unsure whether or not the model recreates the published results as there are no simple figures of changing concentration against time.  Also sodium and chloride are set to constant values in this model - we suspect we need to derive an ODE equation based on the reaction figure (fig 1) in the paper.</para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>ABSTRACT: The aim of this study was to construct a numerical model of the thiazide-sensitive Na-Cl cotransporter (TSC) that can predict kinetics of thiazide binding and substrate transport of TSC. We hypothesized that the mechanisms underlying these kinetic properties can be approximated by a state diagram in which the transporter has two binding sites, one for sodium and another for chloride and thiazide. On the basis of the state diagram, a system of linear equations that should be satisfied in the steady state was postulated. Numerical solution of these equations yielded model prediction of kinetics of thiazide binding and substrate transport. Rate constants, which determine transitional rates between states, were systematically adjusted to minimize a penalty function that was devised to quantitatively estimate the difference between model predictions and experimental results. With the resultant rate constants, the model could simulate the following experimental results: 1) dissociation constant of thiazide in the absence of sodium and chloride; 2) inhibitory effect of chloride on thiazide binding; 3) stimulatory effect of sodium on thiazide binding; 4) combined effects of sodium and chloride on thiazide binding; 5) dependence of sodium influx on extracellular sodium and chloride; and 6) inhibition of sodium influx by extracellular thiazide. We conclude that known kinetic properties of TSC can be predicted by a model which is based on a state diagram.</para>
        <para>The original paper reference is cited below:</para>
        <para>
          A kinetic model of the thiazide-sensitive Na-Cl cotransporter, Hangil Chang and Toshiro Fujita, 1999,
          <emphasis>American Journal of Physiology</emphasis>
          , 276, F952-F959.
          <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/10362783">PubMed ID: 10362783</ulink>
        </para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>diagram of the model</title>
              </objectinfo>
              <imagedata fileref="chang_1999.png" />
            </imageobject>
          </mediaobject>
          <caption>
            State diagram for the thiazide-sensitive Na-Cl cotransporter (TSC).  Transporter (E) has binding sites for sodium (Na ) and chloride (Cl).  Thiazide diuretics (D) compete with chloride for the same binding site.
            <emphasis>_i</emphasis>
            is used to indicate which symbols belong to the intracellular side.
          </caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="millimolar">
    <unit prefix="milli" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="first_order_rate_constant">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="second_order_rate_constant">
    <unit exponent="-1.0" units="millimolar" />
    <unit exponent="-1.0" units="second" />
  </units>
  <component name="environment">
    <variable name="time" public_interface="out" units="second" />
  </component>
  <component name="E" cmeta:id="E">
    <variable initial_value="0.08333" name="E" public_interface="out" units="millimolar" />
    <variable name="k23" public_interface="in" units="second_order_rate_constant" />
    <variable name="k24" public_interface="in" units="first_order_rate_constant" />
    <variable name="k17" public_interface="in" units="first_order_rate_constant" />
    <variable name="k18" public_interface="in" units="first_order_rate_constant" />
    <variable name="k1" public_interface="in" units="second_order_rate_constant" />
    <variable name="k2" public_interface="in" units="first_order_rate_constant" />
    <variable name="k3" public_interface="in" units="second_order_rate_constant" />
    <variable name="k4" public_interface="in" units="first_order_rate_constant" />
    <variable name="ED" public_interface="in" units="millimolar" />
    <variable name="E_" public_interface="in" units="millimolar" />
    <variable name="ENa" public_interface="in" units="millimolar" />
    <variable name="ECl" public_interface="in" units="millimolar" />
    <variable name="D" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="Cl" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>E</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k24</ci>
              <ci>ED</ci>
            </apply>
            <apply>
              <times />
              <ci>k18</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k2</ci>
              <ci>ENa</ci>
            </apply>
            <apply>
              <times />
              <ci>k4</ci>
              <ci>ECl</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k23</ci>
              <ci>D</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k17</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k1</ci>
              <ci>Na</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k3</ci>
              <ci>Cl</ci>
              <ci>E</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="E_" cmeta:id="E_">
    <variable initial_value="0.08333" name="E_" public_interface="out" units="millimolar" />
    <variable name="k29" public_interface="in" units="second_order_rate_constant" />
    <variable name="k30" public_interface="in" units="first_order_rate_constant" />
    <variable name="k17" public_interface="in" units="first_order_rate_constant" />
    <variable name="k18" public_interface="in" units="first_order_rate_constant" />
    <variable name="k11" public_interface="in" units="second_order_rate_constant" />
    <variable name="k12" public_interface="in" units="first_order_rate_constant" />
    <variable name="k9" public_interface="in" units="second_order_rate_constant" />
    <variable name="k10" public_interface="in" units="first_order_rate_constant" />
    <variable name="ED_" public_interface="in" units="millimolar" />
    <variable name="E" public_interface="in" units="millimolar" />
    <variable name="ENa_" public_interface="in" units="millimolar" />
    <variable name="ECl_" public_interface="in" units="millimolar" />
    <variable name="D_" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="Cl_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>E_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k30</ci>
              <ci>ED_</ci>
            </apply>
            <apply>
              <times />
              <ci>k17</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k10</ci>
              <ci>ENa_</ci>
            </apply>
            <apply>
              <times />
              <ci>k12</ci>
              <ci>ECl_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k29</ci>
              <ci>D_</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k18</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k9</ci>
              <ci>Na_</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k11</ci>
              <ci>Cl_</ci>
              <ci>E_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ED" cmeta:id="ED">
    <variable initial_value="0.08333" name="ED" public_interface="out" units="millimolar" />
    <variable name="k23" public_interface="in" units="second_order_rate_constant" />
    <variable name="k24" public_interface="in" units="first_order_rate_constant" />
    <variable name="k21" public_interface="in" units="second_order_rate_constant" />
    <variable name="k22" public_interface="in" units="first_order_rate_constant" />
    <variable name="E" public_interface="in" units="millimolar" />
    <variable name="ENaD" public_interface="in" units="millimolar" />
    <variable name="D" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ED</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k23</ci>
              <ci>E</ci>
              <ci>D</ci>
            </apply>
            <apply>
              <times />
              <ci>k22</ci>
              <ci>ENaD</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k24</ci>
              <ci>ED</ci>
            </apply>
            <apply>
              <times />
              <ci>k21</ci>
              <ci>Na</ci>
              <ci>ED</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ED_" cmeta:id="ED_">
    <variable initial_value="0.08333" name="ED_" public_interface="out" units="millimolar" />
    <variable name="k29" public_interface="in" units="second_order_rate_constant" />
    <variable name="k30" public_interface="in" units="first_order_rate_constant" />
    <variable name="k27" public_interface="in" units="second_order_rate_constant" />
    <variable name="k28" public_interface="in" units="first_order_rate_constant" />
    <variable name="E_" public_interface="in" units="millimolar" />
    <variable name="ENaD_" public_interface="in" units="millimolar" />
    <variable name="D_" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ED_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k29</ci>
              <ci>E_</ci>
              <ci>D_</ci>
            </apply>
            <apply>
              <times />
              <ci>k28</ci>
              <ci>ENaD_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k30</ci>
              <ci>ED_</ci>
            </apply>
            <apply>
              <times />
              <ci>k27</ci>
              <ci>Na_</ci>
              <ci>ED_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENaD" cmeta:id="ENaD">
    <variable initial_value="0.08333" name="ENaD" public_interface="out" units="millimolar" />
    <variable name="k25" public_interface="in" units="second_order_rate_constant" />
    <variable name="k26" public_interface="in" units="first_order_rate_constant" />
    <variable name="k21" public_interface="in" units="second_order_rate_constant" />
    <variable name="k22" public_interface="in" units="first_order_rate_constant" />
    <variable name="ED" public_interface="in" units="millimolar" />
    <variable name="ENa" public_interface="in" units="millimolar" />
    <variable name="D" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENaD</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k21</ci>
              <ci>Na</ci>
              <ci>ED</ci>
            </apply>
            <apply>
              <times />
              <ci>k25</ci>
              <ci>D</ci>
              <ci>ENa</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k22</ci>
              <ci>ENaD</ci>
            </apply>
            <apply>
              <times />
              <ci>k26</ci>
              <ci>ENaD</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENaD_" cmeta:id="ENaD_">
    <variable initial_value="0.08333" name="ENaD_" public_interface="out" units="millimolar" />
    <variable name="k27" public_interface="in" units="second_order_rate_constant" />
    <variable name="k28" public_interface="in" units="first_order_rate_constant" />
    <variable name="k31" public_interface="in" units="second_order_rate_constant" />
    <variable name="k32" public_interface="in" units="first_order_rate_constant" />
    <variable name="ED_" public_interface="in" units="millimolar" />
    <variable name="ENa_" public_interface="in" units="millimolar" />
    <variable name="D_" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENaD_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k27</ci>
              <ci>Na_</ci>
              <ci>ED_</ci>
            </apply>
            <apply>
              <times />
              <ci>k31</ci>
              <ci>D_</ci>
              <ci>ENa_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k28</ci>
              <ci>ENaD_</ci>
            </apply>
            <apply>
              <times />
              <ci>k32</ci>
              <ci>ENaD_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENa" cmeta:id="ENa">
    <variable initial_value="0.08333" name="ENa" public_interface="out" units="millimolar" />
    <variable name="k25" public_interface="in" units="second_order_rate_constant" />
    <variable name="k26" public_interface="in" units="first_order_rate_constant" />
    <variable name="k1" public_interface="in" units="second_order_rate_constant" />
    <variable name="k2" public_interface="in" units="first_order_rate_constant" />
    <variable name="k5" public_interface="in" units="second_order_rate_constant" />
    <variable name="k6" public_interface="in" units="first_order_rate_constant" />
    <variable name="E" public_interface="in" units="millimolar" />
    <variable name="ENaCl" public_interface="in" units="millimolar" />
    <variable name="ENaD" public_interface="in" units="millimolar" />
    <variable name="D" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="Cl" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENa</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k1</ci>
              <ci>Na</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k26</ci>
              <ci>ENaD</ci>
            </apply>
            <apply>
              <times />
              <ci>k6</ci>
              <ci>ENaCl</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k2</ci>
              <ci>ENa</ci>
            </apply>
            <apply>
              <times />
              <ci>k5</ci>
              <ci>Cl</ci>
              <ci>ENa</ci>
            </apply>
            <apply>
              <times />
              <ci>k25</ci>
              <ci>D</ci>
              <ci>ENa</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENa_" cmeta:id="ENa_">
    <variable initial_value="0.08333" name="ENa_" public_interface="out" units="millimolar" />
    <variable name="k31" public_interface="in" units="second_order_rate_constant" />
    <variable name="k32" public_interface="in" units="first_order_rate_constant" />
    <variable name="k9" public_interface="in" units="second_order_rate_constant" />
    <variable name="k10" public_interface="in" units="first_order_rate_constant" />
    <variable name="k13" public_interface="in" units="second_order_rate_constant" />
    <variable name="k14" public_interface="in" units="first_order_rate_constant" />
    <variable name="E_" public_interface="in" units="millimolar" />
    <variable name="ENaCl_" public_interface="in" units="millimolar" />
    <variable name="ENaD_" public_interface="in" units="millimolar" />
    <variable name="D_" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="Cl_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENa_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k9</ci>
              <ci>Na_</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k32</ci>
              <ci>ENaD_</ci>
            </apply>
            <apply>
              <times />
              <ci>k14</ci>
              <ci>ENaCl_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k10</ci>
              <ci>ENa_</ci>
            </apply>
            <apply>
              <times />
              <ci>k13</ci>
              <ci>Cl_</ci>
              <ci>ENa_</ci>
            </apply>
            <apply>
              <times />
              <ci>k31</ci>
              <ci>D_</ci>
              <ci>ENa_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ECl" cmeta:id="ECl">
    <variable initial_value="0.08333" name="ECl" public_interface="out" units="millimolar" />
    <variable name="k7" public_interface="in" units="second_order_rate_constant" />
    <variable name="k8" public_interface="in" units="first_order_rate_constant" />
    <variable name="k3" public_interface="in" units="second_order_rate_constant" />
    <variable name="k4" public_interface="in" units="first_order_rate_constant" />
    <variable name="E" public_interface="in" units="millimolar" />
    <variable name="ENaCl" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="Cl" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ECl</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k3</ci>
              <ci>Cl</ci>
              <ci>E</ci>
            </apply>
            <apply>
              <times />
              <ci>k8</ci>
              <ci>ENaCl</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k7</ci>
              <ci>Na</ci>
              <ci>ECl</ci>
            </apply>
            <apply>
              <times />
              <ci>k4</ci>
              <ci>ECl</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ECl_" cmeta:id="ECl_">
    <variable initial_value="0.08333" name="ECl_" public_interface="out" units="millimolar" />
    <variable name="k11" public_interface="in" units="second_order_rate_constant" />
    <variable name="k12" public_interface="in" units="first_order_rate_constant" />
    <variable name="k15" public_interface="in" units="second_order_rate_constant" />
    <variable name="k16" public_interface="in" units="first_order_rate_constant" />
    <variable name="E_" public_interface="in" units="millimolar" />
    <variable name="ENaCl_" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="Cl_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ECl_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k11</ci>
              <ci>Cl_</ci>
              <ci>E_</ci>
            </apply>
            <apply>
              <times />
              <ci>k16</ci>
              <ci>ENaCl_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k15</ci>
              <ci>Na_</ci>
              <ci>ECl_</ci>
            </apply>
            <apply>
              <times />
              <ci>k12</ci>
              <ci>ECl_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENaCl" cmeta:id="ENaCl">
    <variable initial_value="0.08333" name="ENaCl" public_interface="out" units="millimolar" />
    <variable name="k7" public_interface="in" units="second_order_rate_constant" />
    <variable name="k8" public_interface="in" units="first_order_rate_constant" />
    <variable name="k5" public_interface="in" units="second_order_rate_constant" />
    <variable name="k6" public_interface="in" units="first_order_rate_constant" />
    <variable name="k19" public_interface="in" units="first_order_rate_constant" />
    <variable name="k20" public_interface="in" units="first_order_rate_constant" />
    <variable name="ENa" public_interface="in" units="millimolar" />
    <variable name="ECl" public_interface="in" units="millimolar" />
    <variable name="ENaCl_" public_interface="in" units="millimolar" />
    <variable name="Na" public_interface="in" units="millimolar" />
    <variable name="Cl" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENaCl</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k5</ci>
              <ci>Cl</ci>
              <ci>ENa</ci>
            </apply>
            <apply>
              <times />
              <ci>k7</ci>
              <ci>Na</ci>
              <ci>ECl</ci>
            </apply>
            <apply>
              <times />
              <ci>k20</ci>
              <ci>ENaCl_</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k6</ci>
              <ci>ENaCl</ci>
            </apply>
            <apply>
              <times />
              <ci>k8</ci>
              <ci>ENaCl</ci>
            </apply>
            <apply>
              <times />
              <ci>k19</ci>
              <ci>ENaCl</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ENaCl_" cmeta:id="ENaCl_">
    <variable initial_value="0.08333" name="ENaCl_" public_interface="out" units="millimolar" />
    <variable name="k15" public_interface="in" units="second_order_rate_constant" />
    <variable name="k16" public_interface="in" units="first_order_rate_constant" />
    <variable name="k13" public_interface="in" units="second_order_rate_constant" />
    <variable name="k14" public_interface="in" units="first_order_rate_constant" />
    <variable name="k19" public_interface="in" units="first_order_rate_constant" />
    <variable name="k20" public_interface="in" units="first_order_rate_constant" />
    <variable name="ENa_" public_interface="in" units="millimolar" />
    <variable name="ECl_" public_interface="in" units="millimolar" />
    <variable name="ENaCl" public_interface="in" units="millimolar" />
    <variable name="Na_" public_interface="in" units="millimolar" />
    <variable name="Cl_" public_interface="in" units="millimolar" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>ENaCl_</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k13</ci>
              <ci>Cl_</ci>
              <ci>ENa_</ci>
            </apply>
            <apply>
              <times />
              <ci>k15</ci>
              <ci>Na_</ci>
              <ci>ECl_</ci>
            </apply>
            <apply>
              <times />
              <ci>k19</ci>
              <ci>ENaCl</ci>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>k14</ci>
              <ci>ENaCl_</ci>
            </apply>
            <apply>
              <times />
              <ci>k16</ci>
              <ci>ENaCl_</ci>
            </apply>
            <apply>
              <times />
              <ci>k20</ci>
              <ci>ENaCl_</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="reaction_constants">
    <variable initial_value="1.0E5" name="k1" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="4.183E5" name="k2" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k3" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="4.928E6" name="k4" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k5" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="1.065E6" name="k6" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k7" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="8.940E4" name="k8" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k9" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="4.183E5" name="k10" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k11" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="4.982E6" name="k12" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k13" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="1.065E6" name="k14" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k15" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="8.940E4" name="k16" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="4.587E5" name="k17" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k18" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E3" name="k19" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="2.180E2" name="k20" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k21" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="4.183E5" name="k22" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k23" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="3.192E1" name="k24" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k25" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="3.192E1" name="k26" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k27" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="1.389E5" name="k28" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k29" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="3.514E-1" name="k30" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="1.0E5" name="k31" public_interface="out" units="second_order_rate_constant" />
    <variable initial_value="1.166E-1" name="k32" public_interface="out" units="first_order_rate_constant" />
    <variable initial_value="50.0" name="Na" public_interface="out" units="millimolar" />
    <variable initial_value="96.0" name="Cl" public_interface="out" units="millimolar" />
    <variable initial_value="1.0E-6" name="D" public_interface="out" units="millimolar" />
    <variable initial_value="40.0" name="Cl_" public_interface="out" units="millimolar" />
    <variable initial_value="10.0" name="Na_" public_interface="out" units="millimolar" />
    <variable initial_value="1.0E-6" name="D_" public_interface="out" units="millimolar" />
  </component>
  <connection>
    <map_components component_1="ECl_" component_2="ENaCl_" />
    <map_variables variable_1="ECl_" variable_2="ECl_" />
  </connection>
  <connection>
    <map_components component_1="ENa_" component_2="ENaD_" />
    <map_variables variable_1="ENa_" variable_2="ENa_" />
  </connection>
  <connection>
    <map_components component_1="E_" component_2="ECl_" />
    <map_variables variable_1="E_" variable_2="E_" />
  </connection>
  <connection>
    <map_components component_1="ENaCl_" component_2="ENa_" />
    <map_variables variable_1="ENaCl_" variable_2="ENaCl_" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENaD" />
    <map_variables variable_1="D" variable_2="D" />
    <map_variables variable_1="k22" variable_2="k22" />
    <map_variables variable_1="k25" variable_2="k25" />
    <map_variables variable_1="k26" variable_2="k26" />
    <map_variables variable_1="k21" variable_2="k21" />
    <map_variables variable_1="Na" variable_2="Na" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENaD" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="E_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="E" component_2="ECl" />
    <map_variables variable_1="E" variable_2="E" />
  </connection>
  <connection>
    <map_components component_1="ENa" component_2="E" />
    <map_variables variable_1="ENa" variable_2="ENa" />
  </connection>
  <connection>
    <map_components component_1="ED" component_2="ENaD" />
    <map_variables variable_1="ED" variable_2="ED" />
  </connection>
  <connection>
    <map_components component_1="ENaD" component_2="ENa" />
    <map_variables variable_1="ENaD" variable_2="ENaD" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENa" />
    <map_variables variable_1="k5" variable_2="k5" />
    <map_variables variable_1="D" variable_2="D" />
    <map_variables variable_1="k1" variable_2="k1" />
    <map_variables variable_1="k6" variable_2="k6" />
    <map_variables variable_1="k25" variable_2="k25" />
    <map_variables variable_1="k26" variable_2="k26" />
    <map_variables variable_1="Cl" variable_2="Cl" />
    <map_variables variable_1="Na" variable_2="Na" />
    <map_variables variable_1="k2" variable_2="k2" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="E" />
    <map_variables variable_1="k23" variable_2="k23" />
    <map_variables variable_1="D" variable_2="D" />
    <map_variables variable_1="k18" variable_2="k18" />
    <map_variables variable_1="k24" variable_2="k24" />
    <map_variables variable_1="k1" variable_2="k1" />
    <map_variables variable_1="k3" variable_2="k3" />
    <map_variables variable_1="Cl" variable_2="Cl" />
    <map_variables variable_1="k4" variable_2="k4" />
    <map_variables variable_1="k17" variable_2="k17" />
    <map_variables variable_1="Na" variable_2="Na" />
    <map_variables variable_1="k2" variable_2="k2" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ECl_" />
    <map_variables variable_1="k16" variable_2="k16" />
    <map_variables variable_1="k11" variable_2="k11" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="k15" variable_2="k15" />
    <map_variables variable_1="Cl_" variable_2="Cl_" />
    <map_variables variable_1="k12" variable_2="k12" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ECl_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ENa" component_2="ENaD" />
    <map_variables variable_1="ENa" variable_2="ENa" />
  </connection>
  <connection>
    <map_components component_1="ECl" component_2="E" />
    <map_variables variable_1="ECl" variable_2="ECl" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ED_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ED" component_2="E" />
    <map_variables variable_1="ED" variable_2="ED" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENaCl" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ED" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ENaCl" component_2="ENaCl_" />
    <map_variables variable_1="ENaCl" variable_2="ENaCl" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENa_" />
    <map_variables variable_1="k32" variable_2="k32" />
    <map_variables variable_1="D_" variable_2="D_" />
    <map_variables variable_1="k10" variable_2="k10" />
    <map_variables variable_1="k14" variable_2="k14" />
    <map_variables variable_1="k13" variable_2="k13" />
    <map_variables variable_1="k31" variable_2="k31" />
    <map_variables variable_1="k9" variable_2="k9" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="Cl_" variable_2="Cl_" />
  </connection>
  <connection>
    <map_components component_1="E_" component_2="ENa_" />
    <map_variables variable_1="E_" variable_2="E_" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ED_" />
    <map_variables variable_1="k27" variable_2="k27" />
    <map_variables variable_1="D_" variable_2="D_" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="k28" variable_2="k28" />
    <map_variables variable_1="k29" variable_2="k29" />
    <map_variables variable_1="k30" variable_2="k30" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENaCl_" />
    <map_variables variable_1="k16" variable_2="k16" />
    <map_variables variable_1="k14" variable_2="k14" />
    <map_variables variable_1="k13" variable_2="k13" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="k20" variable_2="k20" />
    <map_variables variable_1="k15" variable_2="k15" />
    <map_variables variable_1="k19" variable_2="k19" />
    <map_variables variable_1="Cl_" variable_2="Cl_" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENaD_" />
    <map_variables variable_1="k27" variable_2="k27" />
    <map_variables variable_1="k32" variable_2="k32" />
    <map_variables variable_1="D_" variable_2="D_" />
    <map_variables variable_1="k31" variable_2="k31" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="k28" variable_2="k28" />
  </connection>
  <connection>
    <map_components component_1="E" component_2="ED" />
    <map_variables variable_1="E" variable_2="E" />
  </connection>
  <connection>
    <map_components component_1="ECl_" component_2="E_" />
    <map_variables variable_1="ECl_" variable_2="ECl_" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENa_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="E_" />
    <map_variables variable_1="k18" variable_2="k18" />
    <map_variables variable_1="D_" variable_2="D_" />
    <map_variables variable_1="k10" variable_2="k10" />
    <map_variables variable_1="k9" variable_2="k9" />
    <map_variables variable_1="k11" variable_2="k11" />
    <map_variables variable_1="Na_" variable_2="Na_" />
    <map_variables variable_1="Cl_" variable_2="Cl_" />
    <map_variables variable_1="k12" variable_2="k12" />
    <map_variables variable_1="k17" variable_2="k17" />
    <map_variables variable_1="k29" variable_2="k29" />
    <map_variables variable_1="k30" variable_2="k30" />
  </connection>
  <connection>
    <map_components component_1="ENa_" component_2="E_" />
    <map_variables variable_1="ENa_" variable_2="ENa_" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ECl" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ED_" component_2="E_" />
    <map_variables variable_1="ED_" variable_2="ED_" />
  </connection>
  <connection>
    <map_components component_1="ENa_" component_2="ENaCl_" />
    <map_variables variable_1="ENa_" variable_2="ENa_" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENaD_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENa" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ENa" component_2="ENaCl" />
    <map_variables variable_1="ENa" variable_2="ENa" />
  </connection>
  <connection>
    <map_components component_1="ED_" component_2="ENaD_" />
    <map_variables variable_1="ED_" variable_2="ED_" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ENaCl_" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="ENaD" component_2="ED" />
    <map_variables variable_1="ENaD" variable_2="ENaD" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ED" />
    <map_variables variable_1="k23" variable_2="k23" />
    <map_variables variable_1="D" variable_2="D" />
    <map_variables variable_1="k24" variable_2="k24" />
    <map_variables variable_1="k22" variable_2="k22" />
    <map_variables variable_1="k21" variable_2="k21" />
    <map_variables variable_1="Na" variable_2="Na" />
  </connection>
  <connection>
    <map_components component_1="E" component_2="ENa" />
    <map_variables variable_1="E" variable_2="E" />
  </connection>
  <connection>
    <map_components component_1="ENaCl_" component_2="ECl_" />
    <map_variables variable_1="ENaCl_" variable_2="ENaCl_" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="E" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ECl" />
    <map_variables variable_1="k3" variable_2="k3" />
    <map_variables variable_1="k8" variable_2="k8" />
    <map_variables variable_1="Cl" variable_2="Cl" />
    <map_variables variable_1="k4" variable_2="k4" />
    <map_variables variable_1="Na" variable_2="Na" />
    <map_variables variable_1="k7" variable_2="k7" />
  </connection>
  <connection>
    <map_components component_1="E_" component_2="E" />
    <map_variables variable_1="E_" variable_2="E_" />
  </connection>
  <connection>
    <map_components component_1="reaction_constants" component_2="ENaCl" />
    <map_variables variable_1="k5" variable_2="k5" />
    <map_variables variable_1="k6" variable_2="k6" />
    <map_variables variable_1="k20" variable_2="k20" />
    <map_variables variable_1="k8" variable_2="k8" />
    <map_variables variable_1="k19" variable_2="k19" />
    <map_variables variable_1="Cl" variable_2="Cl" />
    <map_variables variable_1="Na" variable_2="Na" />
    <map_variables variable_1="k7" variable_2="k7" />
  </connection>
  <connection>
    <map_components component_1="ECl" component_2="ENaCl" />
    <map_variables variable_1="ECl" variable_2="ECl" />
  </connection>
  <connection>
    <map_components component_1="ENaCl" component_2="ECl" />
    <map_variables variable_1="ENaCl" variable_2="ENaCl" />
  </connection>
  <connection>
    <map_components component_1="ENaD_" component_2="ED_" />
    <map_variables variable_1="ENaD_" variable_2="ENaD_" />
  </connection>
  <connection>
    <map_components component_1="ENaCl" component_2="ENa" />
    <map_variables variable_1="ENaCl" variable_2="ENaCl" />
  </connection>
  <connection>
    <map_components component_1="E" component_2="E_" />
    <map_variables variable_1="E" variable_2="E" />
  </connection>
  <connection>
    <map_components component_1="E_" component_2="ED_" />
    <map_variables variable_1="E_" variable_2="E_" />
  </connection>
  <connection>
    <map_components component_1="ENaD_" component_2="ENa_" />
    <map_variables variable_1="ENaD_" variable_2="ENaD_" />
  </connection>
  <connection>
    <map_components component_1="ENaCl_" component_2="ENaCl" />
    <map_variables variable_1="ENaCl_" variable_2="ENaCl_" />
  </connection>

  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:model="http://www.bhi.washington.edu/SemSim/14102016093627598p1300#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:bibo="http://purl.org/ontology/bibo/" xmlns:opb="http://bhi.washington.edu/OPB#" xmlns:foaf="http://xmlns.com/foaf/0.1/" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">

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  <rdf:Description rdf:about="#chang_fujita_b_1999">
    <bqmodel:description rdf:resource="https://www.ncbi.nlm.nih.gov/pubmed/10362782"/>
    <dcterms:journal>The American Physiological Society</dcterms:journal>
  </rdf:Description>
  
  <bibo:Article rdf:ID="article">
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    <bibo:pageStart>F931</bibo:pageStart>
    <bibo:pageEnd>F951</bibo:pageEnd>
    <dcterms:PMCID rdf:resource="10362782"/>
    <dcterms:isPartOf rdf:resource="urn:issn:0000-0000"/>
    <dcterms:isPartOf rdf:resource="#paper"/>
  </bibo:Article>

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  </rdf:RDF>
</model>