// title: A numerical model of the renal distal tubule
// li: transporters
// li: ion channels
// li: distal tubule
// li: water and mineral metabolism
// li: #author1Vcard; #author1VcardN; FN HANGIL CHANG; Family CHANG; Given HANGIL
// li: #author2Vcard; #author2VcardN; FN TOSHIRO FUJITA; Family FUJITA; Given TOSHIRO
// description: #article; creator HANGIL CHANG AND TOSHIRO FUJITA; issued 1999; title A numerical model of the renal distal tubule; volume 276; issue 6; pageStart F931; pageEnd F951; PMCID 10362782; isPartOf urn:issn:0000-0000; isPartOf #paper; publisher #the_publisher; name The American Physiological Society; #abc; name a b c; #xyz; name x y z; issued June, 1999; isbn 000000K
// description: https://www.ncbi.nlm.nih.gov/pubmed/10362782
// journal: The American Physiological Society
// li: lumen
// li: cytosol
// li: tissue fluid
// li: apical membrane
// li: basolateral membrane
// located_in: http://identifiers.org/fma/FMA:84666
// isDescribedBy: #Na-Cl_cotransporter; isInstanceOf http://www.uniprot.org/uniprot/P55018; Protein Solute carrier family 12 member 3; Gene Slc12a3; Species Rattus norvegicus (Rat)
// located_in: http://identifiers.org/fma/FMA:84666
// isDescribedBy: #K-Cl_cotransporter; isInstanceOf http://www.uniprot.org/uniprot/P55016; Protein Solute carrier family 12 member 1; Gene Slc12a1; Species Rattus norvegicus (Rat)
// located_in: http://identifiers.org/fma/FMA:84666
// isDescribedBy: #Na_channel; located_in http://identifiers.org/go/GO:0005272
// located_in: http://identifiers.org/fma/FMA:84666
// isDescribedBy: #K_channel; located_in http://identifiers.org/go/GO:0005267
// located_in: http://identifiers.org/fma/FMA:84666
// isDescribedBy: #Cl_channel; located_in http://identifiers.org/go/GO:0005254
// located_in: http://identifiers.org/fma/FMA:84669
// isDescribedBy: #Na-K-ATPase; located_in http://identifiers.org/go/GO:0005391
// located_in: http://identifiers.org/fma/FMA:84669
// isDescribedBy: #K_channel
// located_in: http://identifiers.org/fma/FMA:84669
// isDescribedBy: #Cl_channel
// located_in: paracellular_pathway
// isDescribedBy: #Na_channel
// located_in: paracellular_pathway
// isDescribedBy: #K_channel
// located_in: paracellular_pathway
// isDescribedBy: #Cl_channel
// isDescribedBy: http://ajprenal.physiology.org/content/276/6/F931.long
def model chang_fujita_b_1999 as
  // A numerical model of the renal distal tubule
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This is the CellML description of Chang and Fujita's 1999 numerical model of the renal distal tubule. It should be noted that the initial conditions used in this description represent those in the early distal tubule. For model representations of the late distal tublule, these initial values should be replaced with those listed in the orginal paper for the late distal tubule. The model from the original paper has been modified slightly to include differential equations defining the change in solute concentrations over time. These equations were added to facilitate the use of the CellML code in CMISS. Note that the model is not running correctly in COR or OpenCell and there are unit inconsistencies.
  //
  // Model Structure
  //
  // ABSTRACT: A numerical model of the rat distal tubule was developed to simulate water and solute transport in this nephron segment. This model incorporates the following: 1) Na-Cl cotransporter, K-Cl cotransporter, Na channel, K channel, and Cl channel in the luminal membrane; 2) Na-K-ATPase, K channel, and Cl channel in the basolateral membrane; and 3) conductances for Na, K, and Cl in the paracellular pathway. Transport rates were calculated using kinetic equations. Axial heterogeneity was represented by partitioning the model into two subsegments with different sets of model parameters. Model equations derived from the principles of mass conservation and electrical neutrality were solved numerically. Values of the model parameters were adjusted to minimize a penalty function that was devised to quantify the difference between model predictions and experimental results. The developed model could simulate the water and solute transport of the distal tubule in the normal state, as well as in conditions including thiazide or amiloride application and various levels of sodium load and tubular flow rate.
  //
  // The original paper reference is cited below:
  //
  // A numerical model of the renal distal tubule, Hangil Chang and Toshiro Fujita, 1999, American Journal of Physiology , 276, F952-F959. PubMed ID: 10362782 (http://www.ncbi.nlm.nih.gov/pubmed/10362782)
  //
  // diagram of the model
  //
  // Transport mechanisms of model tubule. In the luminal cell membrane, there are Na-Cl cotransporter, K-Cl cotransporter, Na channel, K channel, and Cl channel. In the basolateral cell membrane, there are Na-K-ATPase, K channel, and Cl channel. In the paracellular pathway, which faces luminal and basolateral compartments, there are conductances for sodium, potassium, and chloride. Axial heterogeneity of the distal tubule was represented by changing the model parameters in the early and the late parts of the model tubule.
  def unit flux as
    unit second {expo: -1.0};
    unit metre {expo: -3.0, pref: centi};
    unit mole {pref: milli};
  enddef;
  def unit mmol_per_cm3 as
    unit mole {pref: milli};
    unit metre {expo: -3.0, pref: centi};
  enddef;
  def unit cm_per_s_mmHg as
    unit second {expo: -1.0};
    unit mmHg {expo: -1.0};
    unit metre {pref: centi};
  enddef;
  def unit mmHg as base unit;
  def unit C_per_mmol as
    unit coulomb;
    unit mole {expo: -1.0, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit cm_per_s as
    unit second {expo: -1.0};
    unit metre {pref: centi};
  enddef;
  def unit J_per_mmol as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0, pref: milli};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp imported_variables as
    var C_m_Imp: mmol_per_cm3 {init: 0.1033, priv: out};
    var C_c_Imp: mmol_per_cm3 {init: 0.1124, priv: out};
    var psi_m: millivolt {init: -28.0, priv: out};
    var psi_c: millivolt {init: -86.4, priv: out};
  enddef;

  def comp solute_concentrations as
    var C_m_Na: mmol_per_cm3 {init: 0.05, pub: out};
    var C_m_K: mmol_per_cm3 {init: 0.002, pub: out};
    var C_m_Cl: mmol_per_cm3 {init: 0.03, pub: out};
    var C_c_Na: mmol_per_cm3 {init: 0.0164, pub: out};
    var C_c_K: mmol_per_cm3 {init: 0.1637, pub: out};
    var C_c_Cl: mmol_per_cm3 {init: 0.0203, pub: out};
    var C_s_Na: mmol_per_cm3 {init: 1.438E-1, pub: out};
    var C_s_K: mmol_per_cm3 {init: 4.25E-3, pub: out};
    var C_s_Cl: mmol_per_cm3 {init: 1.12E-1, pub: out};
    var J_mc_Na: flux {pub: in};
    var J_ms_Na: flux {pub: in};
    var J_sc_Na: flux {pub: in};
    var J_mc_K: flux {pub: in};
    var J_ms_K: flux {pub: in};
    var J_sc_K: flux {pub: in};
    var J_mc_Cl: flux {pub: in};
    var J_ms_Cl: flux {pub: in};
    var J_sc_Cl: flux {pub: in};
    var time: second {pub: in};
    ode(C_m_Na, time) = -(J_mc_Na+J_ms_Na);
    ode(C_s_Na, time) = J_ms_Na-J_sc_Na;
    ode(C_c_Na, time) = J_mc_Na+J_sc_Na;
    ode(C_m_K, time) = -(J_mc_K+J_ms_K);
    ode(C_s_K, time) = J_ms_K-J_sc_K;
    ode(C_c_K, time) = J_mc_K+J_sc_K;
    ode(C_m_Cl, time) = -(J_mc_Cl+J_ms_Cl);
    ode(C_s_Cl, time) = J_ms_Cl-J_sc_Cl;
    ode(C_c_Cl, time) = J_mc_Cl+J_sc_Cl;
  enddef;

  def comp constants as
    var RT: J_per_mmol {init: 2.579, pub: out};
    var F: C_per_mmol {init: 96.48, pub: out};
    var C_s_Imp: mmol_per_cm3 {init: 4.525E-2, pub: out};
    var psi_s: millivolt {init: 0.0, pub: out};
  enddef;

  def comp mc_sodium_flux as
    var J_mc_Na: flux {pub: out};
    var J_mc_NaCl: flux {pub: out};
    var G_mc_Na: flux;
    var P_mc_Na: cm_per_s {init: 3.27E-6};
    var J_mc_NaCl_max: flux {init: 3.21E-5};
    var K_mc_Na_NaCl: mmol_per_cm3 {init: 5.11E-2};
    var K_mc_Cl_NaCl: mmol_per_cm3 {init: 1.92E-2};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_Na = J_mc_NaCl+G_mc_Na;
    G_mc_Na = P_mc_Na*(F*(psi_m-psi_c)/RT)*((C_m_Na-C_c_Na*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    J_mc_NaCl = J_mc_NaCl_max*((C_m_Na/K_mc_Na_NaCl*(C_m_Cl/K_mc_Cl_NaCl)-C_c_Na/K_mc_Na_NaCl*(C_c_Cl/K_mc_Cl_NaCl))/((1.0{dimensionless}+C_m_Na/K_mc_Na_NaCl*(C_m_Cl/K_mc_Cl_NaCl))*(1.0{dimensionless}+C_c_Na/K_mc_Na_NaCl)*(1.0{dimensionless}+C_c_Cl/K_mc_Cl_NaCl)+(1.0{dimensionless}+C_c_Na/K_mc_Na_NaCl*(C_c_Cl/K_mc_Cl_NaCl))*(1.0{dimensionless}+C_m_Na/K_mc_Na_NaCl)*(1.0{dimensionless}+C_m_Cl/K_mc_Cl_NaCl)));
  enddef;

  def comp mc_potassium_flux as
    var J_mc_K: flux {pub: out};
    var J_mc_KCl: flux {pub: out};
    var G_mc_K: flux;
    var J_mc_KCl_max: flux {init: 6.31E-8};
    var K_mc_K_KCl: mmol_per_cm3 {init: 5.30E-2};
    var K_mc_Cl_KCl: mmol_per_cm3 {init: 2.13E-2};
    var P_mc_K: cm_per_s {init: 4.90E-7};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_K = J_mc_KCl+G_mc_K;
    G_mc_K = P_mc_K*(F*(psi_m-psi_c)/RT)*((C_m_K-C_c_K*exp(-(F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_c))));
    J_mc_KCl = J_mc_KCl_max*((C_m_K/K_mc_K_KCl*(C_m_Cl/K_mc_Cl_KCl)-C_c_K/K_mc_K_KCl*(C_c_Cl/K_mc_Cl_KCl))/((1.0{dimensionless}+C_m_K/K_mc_K_KCl*(C_m_Cl/K_mc_Cl_KCl))*(1.0{dimensionless}+C_c_K/K_mc_K_KCl)*(1.0{dimensionless}+C_c_Cl/K_mc_Cl_KCl)+(1.0{dimensionless}+C_c_K/K_mc_K_KCl*(C_c_Cl/K_mc_Cl_KCl))*(1.0{dimensionless}+C_m_K/K_mc_K_KCl)*(1.0{dimensionless}+C_m_Cl/K_mc_Cl_KCl)));
  enddef;

  def comp mc_chloride_flux as
    var J_mc_Cl: flux {pub: out};
    var G_mc_Cl: flux;
    var P_mc_Cl: cm_per_s {init: 1.43E-6};
    var time: second {pub: in};
    var J_mc_NaCl: flux {pub: in};
    var J_mc_KCl: flux {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_mc_Cl = J_mc_NaCl+J_mc_KCl+G_mc_Cl;
    G_mc_Cl = P_mc_Cl*(-1.0{dimensionless}*F*(psi_m-psi_c)/RT)*((C_m_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_c))));
  enddef;

  def comp sc_sodium_flux as
    var J_a: flux {pub: out};
    var J_sc_Na: flux {pub: out};
    var J_a_max: flux {init: 2.69E-6};
    var K_Na_ATPase: mmol_per_cm3 {init: 1.20E-2};
    var time: second {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    J_sc_Na = -3.0{dimensionless}*J_a;
    J_a = J_a_max*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_Na_ATPase/C_c_Na, 3.0{dimensionless})));
  enddef;

  def comp sc_potassium_flux as
    var J_sc_K: flux {pub: out};
    var G_sc_K: flux;
    var P_sc_K: cm_per_s {init: 4.74E-4};
    var J_a: flux {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var psi_s: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_sc_K = 2.0{dimensionless}*J_a+G_sc_K;
    G_sc_K = P_sc_K*(F*(psi_s-psi_c)/RT)*((C_s_K-C_c_K*exp(-(F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_s-psi_c))));
  enddef;

  def comp sc_chloride_flux as
    var J_sc_Cl: flux {pub: out};
    var G_sc_Cl: flux;
    var P_sc_Cl: cm_per_s {init: 9.16E-5};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var psi_s: millivolt {pub: in};
    var psi_c: millivolt {pub: in};
    J_sc_Cl = G_sc_Cl;
    G_sc_Cl = P_sc_Cl*(-1.0{dimensionless}*F*(psi_s-psi_c)/RT)*((C_s_Cl-C_c_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_s-psi_c))));
  enddef;

  def comp ms_sodium_flux as
    var J_ms_Na: flux {pub: out};
    var G_ms_Na: flux;
    var P_ms_Na: cm_per_s {init: 4.80E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_s_Na: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_Na = G_ms_Na;
    G_ms_Na = P_ms_Na*(F*(psi_m-psi_s)/RT)*((C_m_Na-C_s_Na*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
  enddef;

  def comp ms_potassium_flux as
    var J_ms_K: flux {pub: out};
    var G_ms_K: flux;
    var P_ms_K: cm_per_s {init: 4.80E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_K = G_ms_K;
    G_ms_K = P_ms_K*(F*(psi_m-psi_s)/RT)*((C_m_K-C_s_K*exp(-(F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(F/RT)*(psi_m-psi_s))));
  enddef;

  def comp ms_chloride_flux as
    var J_ms_Cl: flux {pub: out};
    var G_ms_Cl: flux;
    var P_ms_Cl: cm_per_s {init: 2.40E-6};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    var F: C_per_mmol {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var psi_m: millivolt {pub: in};
    var psi_s: millivolt {pub: in};
    J_ms_Cl = G_ms_Cl;
    G_ms_Cl = P_ms_Cl*(-1.0{dimensionless}*F*(psi_m-psi_s)/RT)*((C_m_Cl-C_s_Cl*exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s)))/(1.0{dimensionless}-exp(-(-1.0{dimensionless}*F/RT)*(psi_m-psi_s))));
  enddef;

  def comp total_transepithelial_sodium_flux as
    var J_Na: flux;
    var J_mc_Na: flux {pub: in};
    var J_ms_Na: flux {pub: in};
    var time: second {pub: in};
    J_Na = J_mc_Na+J_ms_Na;
  enddef;

  def comp total_transepithelial_potassium_flux as
    var J_K: flux;
    var J_mc_K: flux {pub: in};
    var J_ms_K: flux {pub: in};
    var time: second {pub: in};
    J_K = J_mc_K+J_ms_K;
  enddef;

  def comp total_transepithelial_chloride_flux as
    var J_Cl: flux;
    var J_mc_Cl: flux {pub: in};
    var J_ms_Cl: flux {pub: in};
    var time: second {pub: in};
    J_Cl = J_mc_Cl+J_ms_Cl;
  enddef;

  def comp osmolarities as
    var Osm_m: mmol_per_cm3 {pub: out};
    var Osm_c: mmol_per_cm3 {pub: out};
    var Osm_s: mmol_per_cm3 {pub: out};
    var C_m_Na: mmol_per_cm3 {pub: in};
    var C_m_Cl: mmol_per_cm3 {pub: in};
    var C_m_K: mmol_per_cm3 {pub: in};
    var C_m_Imp: mmol_per_cm3 {pub: in};
    var C_c_Na: mmol_per_cm3 {pub: in};
    var C_c_Cl: mmol_per_cm3 {pub: in};
    var C_c_K: mmol_per_cm3 {pub: in};
    var C_c_Imp: mmol_per_cm3 {pub: in};
    var C_s_Na: mmol_per_cm3 {pub: in};
    var C_s_Cl: mmol_per_cm3 {pub: in};
    var C_s_K: mmol_per_cm3 {pub: in};
    var C_s_Imp: mmol_per_cm3 {pub: in};
    Osm_m = C_m_Na+C_m_K+C_m_Cl+C_m_Imp;
    Osm_c = C_c_Na+C_c_K+C_c_Cl+C_c_Imp;
    Osm_s = C_s_Na+C_s_K+C_s_Cl+C_s_Imp;
  enddef;

  def comp mc_transepithelial_volume_flux as
    var J_mc_v: cm_per_s {pub: out};
    var L_mc_v: cm_per_s_mmHg {init: 5.22E-9};
    var Osm_m: mmol_per_cm3 {pub: in};
    var Osm_c: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_mc_v = L_mc_v*RT*(Osm_m-Osm_c);
  enddef;

  def comp ms_transepithelial_volume_flux as
    var J_ms_v: cm_per_s {pub: out};
    var L_ms_v: cm_per_s_mmHg {init: 0.0};
    var Osm_m: mmol_per_cm3 {pub: in};
    var Osm_s: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_ms_v = L_ms_v*RT*(Osm_m-Osm_s);
  enddef;

  def comp sc_transepithelial_volume_flux as
    var J_sc_v: cm_per_s;
    var L_sc_v: cm_per_s_mmHg {init: 5.22E-7};
    var Osm_s: mmol_per_cm3 {pub: in};
    var Osm_c: mmol_per_cm3 {pub: in};
    var time: second {pub: in};
    var RT: J_per_mmol {pub: in};
    J_sc_v = L_sc_v*RT*(Osm_s-Osm_c);
  enddef;

  def comp total_transepithelial_volume_flux as
    var J_v: cm_per_s;
    var J_mc_v: cm_per_s {pub: in};
    var J_ms_v: cm_per_s {pub: in};
    var time: second {pub: in};
    J_v = J_mc_v+J_ms_v;
  enddef;

  def group as encapsulation for
    comp imported_variables incl
      comp ms_transepithelial_volume_flux;
      comp total_transepithelial_volume_flux;
      comp sc_sodium_flux;
      comp total_transepithelial_sodium_flux;
      comp environment;
      comp constants;
      comp osmolarities;
      comp total_transepithelial_potassium_flux;
      comp mc_transepithelial_volume_flux;
      comp mc_potassium_flux;
      comp mc_chloride_flux;
      comp mc_sodium_flux;
      comp solute_concentrations;
      comp ms_chloride_flux;
      comp sc_transepithelial_volume_flux;
      comp total_transepithelial_chloride_flux;
      comp sc_potassium_flux;
      comp ms_potassium_flux;
      comp sc_chloride_flux;
      comp ms_sodium_flux;
    endcomp;
  enddef;
  def map between environment and ms_potassium_flux for
    vars time and time;
  enddef;
  def map between imported_variables and ms_sodium_flux for
    vars psi_m and psi_m;
  enddef;
  def map between ms_potassium_flux and solute_concentrations for
    vars J_ms_K and J_ms_K;
  enddef;
  def map between environment and ms_chloride_flux for
    vars time and time;
  enddef;
  def map between mc_sodium_flux and mc_chloride_flux for
    vars J_mc_NaCl and J_mc_NaCl;
  enddef;
  def map between constants and sc_transepithelial_volume_flux for
    vars RT and RT;
  enddef;
  def map between osmolarities and sc_transepithelial_volume_flux for
    vars Osm_s and Osm_s;
    vars Osm_c and Osm_c;
  enddef;
  def map between environment and sc_chloride_flux for
    vars time and time;
  enddef;
  def map between solute_concentrations and sc_sodium_flux for
    vars C_c_Na and C_c_Na;
  enddef;
  def map between sc_chloride_flux and solute_concentrations for
    vars J_sc_Cl and J_sc_Cl;
  enddef;
  def map between environment and solute_concentrations for
    vars time and time;
  enddef;
  def map between environment and total_transepithelial_sodium_flux for
    vars time and time;
  enddef;
  def map between constants and mc_potassium_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between ms_sodium_flux and total_transepithelial_sodium_flux for
    vars J_ms_Na and J_ms_Na;
  enddef;
  def map between ms_chloride_flux and total_transepithelial_chloride_flux for
    vars J_ms_Cl and J_ms_Cl;
  enddef;
  def map between ms_sodium_flux and solute_concentrations for
    vars J_ms_Na and J_ms_Na;
  enddef;
  def map between solute_concentrations and mc_potassium_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_c_K and C_c_K;
    vars C_m_K and C_m_K;
    vars C_m_Cl and C_m_Cl;
  enddef;
  def map between constants and mc_sodium_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between ms_chloride_flux and solute_concentrations for
    vars J_ms_Cl and J_ms_Cl;
  enddef;
  def map between imported_variables and mc_chloride_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between imported_variables and ms_potassium_flux for
    vars psi_m and psi_m;
  enddef;
  def map between constants and ms_transepithelial_volume_flux for
    vars RT and RT;
  enddef;
  def map between constants and ms_chloride_flux for
    vars psi_s and psi_s;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between mc_sodium_flux and total_transepithelial_sodium_flux for
    vars J_mc_Na and J_mc_Na;
  enddef;
  def map between mc_potassium_flux and total_transepithelial_potassium_flux for
    vars J_mc_K and J_mc_K;
  enddef;
  def map between solute_concentrations and osmolarities for
    vars C_c_Cl and C_c_Cl;
    vars C_c_K and C_c_K;
    vars C_m_K and C_m_K;
    vars C_s_Na and C_s_Na;
    vars C_c_Na and C_c_Na;
    vars C_s_K and C_s_K;
    vars C_m_Na and C_m_Na;
    vars C_s_Cl and C_s_Cl;
    vars C_m_Cl and C_m_Cl;
  enddef;
  def map between environment and total_transepithelial_chloride_flux for
    vars time and time;
  enddef;
  def map between imported_variables and mc_potassium_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between ms_potassium_flux and total_transepithelial_potassium_flux for
    vars J_ms_K and J_ms_K;
  enddef;
  def map between mc_transepithelial_volume_flux and total_transepithelial_volume_flux for
    vars J_mc_v and J_mc_v;
  enddef;
  def map between sc_potassium_flux and solute_concentrations for
    vars J_sc_K and J_sc_K;
  enddef;
  def map between environment and sc_sodium_flux for
    vars time and time;
  enddef;
  def map between solute_concentrations and ms_sodium_flux for
    vars C_s_Na and C_s_Na;
    vars C_m_Na and C_m_Na;
  enddef;
  def map between environment and mc_chloride_flux for
    vars time and time;
  enddef;
  def map between imported_variables and sc_potassium_flux for
    vars psi_c and psi_c;
  enddef;
  def map between mc_potassium_flux and solute_concentrations for
    vars J_mc_K and J_mc_K;
  enddef;
  def map between solute_concentrations and ms_chloride_flux for
    vars C_s_Cl and C_s_Cl;
    vars C_m_Cl and C_m_Cl;
  enddef;
  def map between solute_concentrations and mc_sodium_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_c_Na and C_c_Na;
    vars C_m_Na and C_m_Na;
    vars C_m_Cl and C_m_Cl;
  enddef;
  def map between solute_concentrations and mc_chloride_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_m_Cl and C_m_Cl;
  enddef;
  def map between constants and ms_sodium_flux for
    vars psi_s and psi_s;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between osmolarities and ms_transepithelial_volume_flux for
    vars Osm_s and Osm_s;
    vars Osm_m and Osm_m;
  enddef;
  def map between environment and mc_sodium_flux for
    vars time and time;
  enddef;
  def map between solute_concentrations and sc_chloride_flux for
    vars C_c_Cl and C_c_Cl;
    vars C_s_Cl and C_s_Cl;
  enddef;
  def map between mc_chloride_flux and solute_concentrations for
    vars J_mc_Cl and J_mc_Cl;
  enddef;
  def map between mc_potassium_flux and mc_chloride_flux for
    vars J_mc_KCl and J_mc_KCl;
  enddef;
  def map between sc_sodium_flux and solute_concentrations for
    vars J_sc_Na and J_sc_Na;
  enddef;
  def map between constants and sc_chloride_flux for
    vars psi_s and psi_s;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between constants and ms_potassium_flux for
    vars psi_s and psi_s;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between constants and mc_transepithelial_volume_flux for
    vars RT and RT;
  enddef;
  def map between ms_transepithelial_volume_flux and total_transepithelial_volume_flux for
    vars J_ms_v and J_ms_v;
  enddef;
  def map between solute_concentrations and ms_potassium_flux for
    vars C_m_K and C_m_K;
    vars C_s_K and C_s_K;
  enddef;
  def map between sc_sodium_flux and sc_potassium_flux for
    vars J_a and J_a;
  enddef;
  def map between mc_sodium_flux and solute_concentrations for
    vars J_mc_Na and J_mc_Na;
  enddef;
  def map between environment and mc_potassium_flux for
    vars time and time;
  enddef;
  def map between constants and osmolarities for
    vars C_s_Imp and C_s_Imp;
  enddef;
  def map between imported_variables and mc_sodium_flux for
    vars psi_m and psi_m;
    vars psi_c and psi_c;
  enddef;
  def map between imported_variables and sc_chloride_flux for
    vars psi_c and psi_c;
  enddef;
  def map between constants and mc_chloride_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between environment and ms_transepithelial_volume_flux for
    vars time and time;
  enddef;
  def map between mc_chloride_flux and total_transepithelial_chloride_flux for
    vars J_mc_Cl and J_mc_Cl;
  enddef;
  def map between environment and sc_potassium_flux for
    vars time and time;
  enddef;
  def map between osmolarities and mc_transepithelial_volume_flux for
    vars Osm_c and Osm_c;
    vars Osm_m and Osm_m;
  enddef;
  def map between imported_variables and osmolarities for
    vars C_c_Imp and C_c_Imp;
    vars C_m_Imp and C_m_Imp;
  enddef;
  def map between constants and sc_potassium_flux for
    vars psi_s and psi_s;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between environment and mc_transepithelial_volume_flux for
    vars time and time;
  enddef;
  def map between environment and total_transepithelial_potassium_flux for
    vars time and time;
  enddef;
  def map between solute_concentrations and sc_potassium_flux for
    vars C_c_K and C_c_K;
    vars C_s_K and C_s_K;
  enddef;
  def map between environment and ms_sodium_flux for
    vars time and time;
  enddef;
  def map between environment and total_transepithelial_volume_flux for
    vars time and time;
  enddef;
  def map between imported_variables and ms_chloride_flux for
    vars psi_m and psi_m;
  enddef;
  def map between environment and sc_transepithelial_volume_flux for
    vars time and time;
  enddef;
enddef;
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_114; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_3; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma66836; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17996; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_c_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_113; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_7; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26708; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_95; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_48; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.Osm_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_107; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_28; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_3; name Osmolality (concentration of Na+, K+, Cl- and Impermeant solute); hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the cytosol compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_sodium_flux.J_mc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_98; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_41; hasMultiplier 1.0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma74550; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_1; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_17; hasPhysicalDefinition http://identifiers.org/go/GO:0005272; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_P55018; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_0; hasMultiplier 1.0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma66836; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_9; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_9; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_42; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_73; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_21; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_17; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma84666; name Na+ flow through Na-Cl and Na across apicall cell membrane; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_2; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_75; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_20; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_74; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_17; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_0; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-Cl cotransporter and Na+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.K_mc_K_KCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_41; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of intrinsic dissociation constant of K+ for K-Cl cotransporter in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_33; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_1; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma74550; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17996; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_s_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_11; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_12; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_11; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma9673; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26216; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.K_mc_Cl_NaCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_30; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of intrinsic dissociation constant of Cl- for Na-Cl cotransporter in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_mc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_13; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-Cl cotransporter and Na+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.C_m_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_31; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_4; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26708; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.J_mc_KCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_38; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_13; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_48; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_P55016; name J_mc_KCL_K flow through K-Cl across apical membrane; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_34; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_15; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_49; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_15; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_23; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_33; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_23; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_sc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_5; name K+ flow through Na-K-ATPase and K channel; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_10; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; hasPhysicalDefinition http://identifiers.org/go/GO:0005267; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_11; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_21; hasPhysicalDefinition http://identifiers.org/go/GO:0005391; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_25; hasMultiplier 1.0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma9673; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_12; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma84669; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_5; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_5; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_52; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_53; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_21; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_25; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_54; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through Na-K-ATPase and K+ channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.P_ms_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_92; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_28; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_71; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; name paracellular pathway; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_39; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_39; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_Cl permeability through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of Cl- from luminal compartment to tissue fluid compartment through the paracellular pathaway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_c_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_116; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_2; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_3; name Impermeant solute; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the cytosol compartment (diffusion coefficient of impermeant solute was from urea)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_47; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.J_mc_KCl_max
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_40; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_38; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_37; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_17; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_17; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Max K+ flow through K-Cl cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: maximum Flux of potassium through K-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_68; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_transepithelial_volume_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_m_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_4; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_93; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_transepithelial_volume_flux.L_sc_v
// description: Hydraulic conductivity from tissue fluid compartment to cytosol compartment through the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_ms_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_7; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_37; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_7; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_17; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_7; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_51; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_37; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_87; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_48; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_69; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; name Cl- flow through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_transepithelial_volume_flux.Osm_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_129; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_28; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the cytosol compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_ms_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_1; name Na+ flow through paracellular pathway; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_63; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_1; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_31; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_76; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_31; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_3; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_43; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_42; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_1; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_transepithelial_volume_flux.Osm_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_125; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_27; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_1; name Osmolality (concentration of Na+, K+, Cl- and Impermeant solute); hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the luminal compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.C_s_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_65; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#constants.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_23; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.J_mc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_24; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-Cl cotransporter and Na+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.C_s_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_87; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_sodium_flux.J_ms_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_99; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.G_sc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_70; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_21; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_61; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_60; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; hasPhysicalDefinition http://identifiers.org/go/GO:0005254; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_29; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_29; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; name sc_Cl flow through Cl channel across basolateral cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Cl- channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_75; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_mc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_3; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_14; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_14; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_78; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_31; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_7; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; name K flow through K-Cl and K across apical cell membrane; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_30; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_6; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_3; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_3; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_8; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_32; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_46; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_79; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_44; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_80; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K-Cl cotransporter and K+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_chloride_flux.J_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_103; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_31; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_82; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_49; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_48; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_46; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Total Cl- flow of transcellular and paracellular transport; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: total transepithelial flux of Cl- comprised of transcellular transport from luminal compartment to cytosol compartment and paracellular transport from luminal compartment to tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.P_ms_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_78; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_65; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_33; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_33; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_Na permeability through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of Na+ from luminal compartment to tissue fluid compartment through the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.J_sc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_69; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_8; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_28; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_18; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_59; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_58; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_28; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_19; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; name J_sc_Cl flow through Cl channel across basolateral cell membrane; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_8; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_8; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Cl- channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.J_a
// description: Rate of ATP hydrolysis by Na-K-ATPase (when one molecule of ATP is hydrolyzed, three molecules of sodium are transported from cytosol to tissue fluid compartment across basolateral cell membrane and two molecules of potassium are transported from tissue fluid to cytosol compartment across basolateral cell membrane)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_volume_flux.J_ms_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_132; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_33; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_93; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_58; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_54; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_89; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_53; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_50; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Volume flux through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Transepithelial volume flux from luminal compartment to tissue fluid compartment through the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_potassium_flux.J_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_100; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_30; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_77; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_45; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_44; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_43; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Total K+ flow of transcellular and paracellular transport; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: total transepithelial flux of K+ comprised of transcellular transport from luminal compartment to cytosol compartment and paracellular transport from luminal compartment to tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.J_mc_KCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_54; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#imported_variables.C_c_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_1; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the cytosol compartment (diffusion coefficient of impermeant solute was from urea)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_volume_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.P_sc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_64; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_57; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_27; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_27; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; name sc_K permeability through basolateral cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of K+ from tissue fluid compartment to cytosol compartment through the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.Osm_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_106; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the luminal compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_transepithelial_volume_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.C_m_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_44; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_5; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26216; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.K_mc_Na_NaCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_29; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of intrinsic dissociation constant of Na+ for Na-Cl cotransporter in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_transepithelial_volume_flux.J_sc_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_127; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_34; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_90; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_54; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_51; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; name Volume flux through basolateral cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Transepithelial volume flux from tisuue fluid compartment to cytosol compartment through the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_82; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.J_a
// description: Rate of ATP hydrolysis by Na-K-ATPase (when one molecule of ATP is hydrolyzed, three molecules of sodium are transported from cytosol to tissue fluid compartment across basolateral cell membrane and two molecules of potassium are transported from tissue fluid to cytosol compartment across basolateral cell membrane)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_sodium_flux.J_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_97; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_29; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_72; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_41; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_40; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_40; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Total Na+ flow of transcellular and paracellular transport; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: total transepithelial flux of Na+ comprised of transcellular transport from luminal compartment to cytosol compartment and paracellular transport from luminal compartment to tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.J_ms_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_76; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_s_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_118; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_13; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_11; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17996; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_s_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_117; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_10; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_11; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26708; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.P_sc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_71; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_62; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_30; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_30; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; name sc_Cl permeability through basolateral cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of Cl- from tissue fluid compartment to cytosol compartment through the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.J_mc_NaCl_max
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_28; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_12; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_29; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_28; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_13; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_13; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_Max_Na flow through Na-Cl across apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: maximum Flux of sodium through Na-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#environment.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.C_c_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_45; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_8; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26216; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.K_Na_ATPase
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_60; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Transport of K+ and Na+ between the cytosol and serosal compartments is governed by Na-K-ATPase (when one molecule of ATP is hydrolyzed, three molecules of sodium are transported from cytosol to tissue fluid compartment and two molecules of potassium are transported from tissue fluid to cytosol compartment across the basolateral cell membrane)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_transepithelial_volume_flux.J_mc_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_121; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_32; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_92; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_57; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_53; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_88; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_52; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_49; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Volume flux through apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Transepithelial volume flux from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_potassium_flux.J_mc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_101; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K-Cl cotransporter and K+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_potassium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.J_sc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_59; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_2; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_24; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_51; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_24; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_2; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_5; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_4; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_21; name Na+ flow through Na-K-ATPase; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_50; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_21; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_2; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-K-ATPase from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#constants.C_s_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_26; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_11; name Impermeant solute; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the tissue fluid compartment (diffusion coefficient of impermeant solute was from urea)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_34; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_s_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_119; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.C_c_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_32; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#imported_variables.C_m_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_0; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_0; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_1; name Impermeant solute; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_chloride_flux.J_mc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_104; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_6; name Cl- flow through Na-Cl cotransporter, K-Cl cotransporter and Cl- channel; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_6; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_40; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_41; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_6; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_42; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_84; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_85; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_83; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_50; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_43; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_86; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_47; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_19; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_15; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_19; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_16; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_13; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_24; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_14; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Na-Cl cotransporter, K-Cl cotransporter and Cl- channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.C_s_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_72; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_transepithelial_volume_flux.L_mc_v
// description: Hydraulic conductivity from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_volume_flux.J_mc_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_131; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_32; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Transepithelial volume flux from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.G_mc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_39; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_36; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_35; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_16; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_16; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_K flow through K channel across apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_chloride_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.G_ms_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_84; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_25; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_67; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_35; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_35; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_K flow through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.G_ms_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_77; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_64; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_32; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_32; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_Na flow paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_transepithelial_volume_flux.J_ms_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_124; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_33; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Transepithelial volume flux from luminal compartment to tissue fluid compartment through the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_sodium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_sc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_21; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Cl- channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_c_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_8; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_sc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_15; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-K-ATPase from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.C_m_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_79; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_transepithelial_volume_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.Osm_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_108; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_29; part_of http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_11; name Osmolality (concentration of Na+, K+, Cl- and Impermeant solute); hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the tissue fluid compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.G_mc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_51; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_17; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_44; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_20; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_20; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_Cl flow through Cl channel across apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Cl- channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_67; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_m_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_5; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#imported_variables.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_81; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_transepithelial_volume_flux.L_ms_v
// description: Hydraulic conductivity (water flux is 0) from luminal compartment to tissue fluid compartment through the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_chloride_flux.J_ms_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_105; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_74; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_transepithelial_volume_flux.Osm_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_128; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_29; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the tissue fluid compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_transepithelial_volume_flux.Osm_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_122; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the luminal compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_ms_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_17; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_4; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_66; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_4; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name K+ flow though paracellular pathway; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_34; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_81; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_4; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_47; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_45; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_9; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_34; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_57; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_volume_flux.J_v
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_130; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_35; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_91; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_56; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_55; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_52; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name Total volume flux of transcellular and paracellular transport; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: total transepithelial volume flux comprised of transcellular transport from luminal compartment to cytosol compartment and paracellular transport from luminal compartment to tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.J_a_max
// description: Maximal rate of ATP hydrolysis
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_s_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_120; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_26; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the tissue fluid compartment (diffusion coefficient of impermeant solute was from urea)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_49; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_m_Imp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_112; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of impermeant solute in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.J_ms_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_90; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_sodium_flux.C_c_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_61; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_s_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_12; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.G_mc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_26; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_10; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_26; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_25; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_17; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_11; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_11; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_Na flow through Na channel across apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_73; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.C_m_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_86; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_m_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_111; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.C_s_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_80; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.P_ms_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_85; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_26; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_68; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_36; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_36; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_K permeability through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of K+ from luminal compartment to tissue fluid compartment through the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_s_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_10; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.C_s_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_94; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the tissue fluid compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.J_ms_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_83; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.J_mc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_37; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K-Cl cotransporter and K+ channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_36; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#total_transepithelial_potassium_flux.J_ms_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_102; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#imported_variables.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_55; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.P_mc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_43; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_39; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_18; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_18; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_K permeability through apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of K+ from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.G_ms_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_91; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_27; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_70; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_20; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_38; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_38; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name ms_Cl flow through paracellular pathway; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through paracellular pathway from luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.C_c_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_66; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.psi_m
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_88; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of luminal compartment is measured from luminal compartment to cytosol compartment across the apical cell membrane and luminal compartment to tissue fluid compartment across the paracellular pathway
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.P_mc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_52; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_45; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_21; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_21; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_Cl permeability through apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of Cl- from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_110; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.J_mc_NaCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_53; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_9; name Na+ flow through Na-Cl across apical cell membrane; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_10; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_47; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_46; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_10; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_22; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_24; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_22; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_23; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.K_mc_Cl_KCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of intrinsic dissociation constant of Cl- for K-Cl cotransporter in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_6; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_m_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_109; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.P_mc_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_27; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_11; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_27; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_18; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_12; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_12; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_14; name mc_Na permeability through apical cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00251
// description: Permeability of Na+ from luminal compartment to cytosol compartment through the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_56; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_chloride_flux.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_96; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.J_mc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_19; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Na-Cl cotransporter, K-Cl cotransporter and Cl- channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_potassium_flux.psi_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_89; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of tissue fluid compartment is measured from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_sodium_flux.J_mc_NaCl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_25; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of sodium through Na-Cl cotransporter from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.G_sc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_63; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_19; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_56; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_22; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mediator_55; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_23; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sink_26; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_15; http://www.bhi.washington.edu/SemSim/14102016092754426p1300#source_26; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_19; name sc_K flow through K channel across basolateral cell membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through K+ channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_sodium_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_chloride_flux.time
// hasPhysicalDefinition: http://identifiers.org/opb/OPB_01023
// description: Time
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#sc_potassium_flux.J_sc_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_62; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of potassium through Na-K-ATPase and K+ channel from tissue fluid compartment to cytosol compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.J_mc_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_50; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: Flux of chloride through Na-Cl cotransporter, K-Cl cotransporter and Cl- channel from luminal compartment to cytosol compartment across the apical cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#osmolarities.C_c_K
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_115; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of potassium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#ms_transepithelial_volume_flux.Osm_s
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_126; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_29; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the tissue fluid compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_transepithelial_volume_flux.Osm_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_123; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_28; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Osmolality in the cytosol compartment (concentration of Na+, K+, Cl- and Impermeant solute)
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_potassium_flux.C_m_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_46; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the luminal compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_c_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_7; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of sodium in the cytosol compartment
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#mc_chloride_flux.psi_c
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_58; hasPhysicalDefinition http://identifiers.org/opb/OPB_00506
// description: Electrical potential of cytosol compartment is measured from cytosol compartment to tissue fluid compartment across the basolateral cell membrane
// http://www.bhi.washington.edu/SemSim/14102016092754426p1300#solute_concentrations.C_c_Cl
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092754426p1300#property_9; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092754426p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of chloride in the cytosol compartment
