// title: Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter
// li: Na+/glucose cotransport
// li: Electrogenic cotransporters
// li: Steady-state kinetics
// li: Reverse sugar transport
// li: SGLT1
// li: #author1Vcard; #author1VcardN; FN S. Eskandari; Family Eskandari; Given S.
// li: #author2Vcard; #author2VcardN; FN E.M. Wright; Family Wright; Given E.M.
// li: #author3Vcard; #author3VcardN; FN D.D.F. Loo; Family Loo; Given D.D.F.
// description: #article; creator S. Eskandari, E.M. Wright, and D.D.F. Loo; issued 2005; title Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter; volume 204; issue 1; pageStart 23; pageEnd 32; PMCID 16007500; isPartOf urn:issn:1432-1424; isPartOf #paper; publisher #the_publisher; name Springer-Verlag; #abc; name a b c; #xyz; name x y z; issued March, 2004; isbn 000000K
// description: https://www.ncbi.nlm.nih.gov/pubmed/16007500
// journal: The Journal of Membrane Biology
// li: lumen
// li: cytosol
// li: cell membrane
// located_in: http://identifiers.org/fma/FMA:70973
// located_in: http://identifiers.org/fma/FMA:17693
// located_in: http://identifiers.org/fma/FMA:17716
// located_in: http://identifiers.org/fma/FMA:84666
// isInstanceOf: http://www.uniprot.org/uniprot/P11170
// Protein: Sodium/glucose cotransporter 1 (SGLT1)
// Gene: SLC5A1
// Species: Oryctolagus cuniculus (Rabbit)
// isDescribedBy: https://dx.doi.org/10.1007/s00232-005-0743-x
def model eskandari_2005 as
  // Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter
  //
  // Jonna Terkildsen
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model is in the process of being curated, the units are consistent and the model runs in COR and PCEnv. This model does not yet recreate all the published results.
  //
  // Model Structure
  //
  // Abstract: This study investigates the reverse mode of the Na/glucose cotransporter (SGLT1). In giant excised inside-out membrane patches from Xenopus laevis oocytes expressing rabbit SGLT1, application of a-methyl-D-glucopyranoside (aMDG) to the cytoplasmic solution induced an outward current from cytosolic to external membrane surface. The outward current was Na- and sugar-dependent, and was blocked by phlorizin, a specific inhibitor of SGLT1. The current-voltage relationship saturated at positive membrane voltages (30-50 mV), and approached zero at -150 mV. The half-maximal concentration for aMDG-evoked outward current (K_0.5_aMDG) was 35 mM (at 0 mV). In comparison, K_0.5_aMDG for forward sugar transport was 0.15 mM (at 0 mV). K_0.5_Na was similar for forward and reverse transport (~ 35mM at 0 mV). Specificity of SGLT1 for reverse transport was: aMDG (1.0) > D-galactose (0.84) > 3-O-methyl-glucose (0.55) > D-glucose (0.38), whereas for forward transport, specificity was: aMDG ~ D-glucose ~ D-galactose > 3-O-methylglucose. Thus there is an asymmetry in sugar kinetics and specificity between forward and reverse modes. Computer simulations showed that a 6-state kinetic model for SGLT1 can account for Na/sugar cotransport and its voltage dependence in both the forward and reverse modes at saturating sodium concentrations. Our data indicate that under physiological conditions, the transporter is poised to accumulate sugar efficiently in the enterocyte.
  //
  // The original paper reference is cited below:
  //
  // Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter, S.Eskandari, E.M. Wright and D.D.F. Loo, 2005, Journal of Membrane Biology , 204, 23-32. PubMed ID: 16007500 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=16007500&query_hl=1&itool=pubmed_docsum)
  //
  // model diagram
  //
  // Schematic diagram of the Eskandari et al 2005 SGLT1 model. C' represents the external-facing carrier. C'' represents the internal-facing carrier.
  def unit um2 as
    unit metre {expo: 2.0, pref: micro};
  enddef;
  def unit umol_per_mol as
    unit umol;
    unit mole {expo: -1.0};
  enddef;
  def unit mol_per_um2 as
    unit mole;
    unit um2 {expo: -1.0};
  enddef;
  def unit M3 as
    unit M {expo: 3.0};
  enddef;
  def unit uA_per_um2 as
    unit uA;
    unit um2 {expo: -1.0};
  enddef;
  def unit per_mol as
    unit mole {expo: -1.0};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1.0};
  enddef;
  def unit uA_per_A as
    unit uA;
    unit ampere {expo: -1.0};
  enddef;
  def unit per_M2_per_second as
    unit second {expo: -1.0};
    unit M {expo: -2.0};
  enddef;
  def unit pA_per_cm2 as
    unit ampere {pref: pico};
    unit metre {expo: -2.0, pref: centi};
  enddef;
  def unit M as
    unit litre {expo: -1.0};
    unit mole;
  enddef;
  def unit M2 as
    unit M {expo: 2.0};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit J_per_K_per_mol as
    unit kelvin {expo: -1.0};
    unit joule;
    unit mole {expo: -1.0};
  enddef;
  def unit volt_per_second as
    unit second {expo: -1.0};
    unit volt;
  enddef;
  def unit per_M_per_second as
    unit second {expo: -1.0};
    unit M {expo: -1.0};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit mM as
    unit litre {expo: -1.0};
    unit mole {pref: milli};
  enddef;
  def unit M3_per_second as
    unit second {expo: -1.0};
    unit M {expo: 3.0};
  enddef;
  def unit per_second as
    unit second {expo: -1.0};
  enddef;
  def unit M_per_second as
    unit second {expo: -1.0};
    unit M;
  enddef;
  def unit per_second5 as
    unit second {expo: -5.0};
  enddef;
  def unit per_M3_per_second5 as
    unit M {expo: -3.0};
    unit second {expo: -5.0};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp parameters as
    var k0_12: per_M2_per_second {init: 80000, pub: out};
    var k0_21: per_second {init: 500, pub: out};
    var k0_23: per_M_per_second {init: 1e5, pub: out};
    var k0_32: per_second {init: 20, pub: out};
    var k0_34: per_second {init: 50, pub: out};
    var k0_43: per_second {init: 50, pub: out};
    var k0_45: per_second {init: 800, pub: out};
    var k0_54: per_M_per_second {init: 1.219e4, pub: out};
    var k0_25: per_second {init: 0.3, pub: out};
    var k0_52: per_second {init: 9.1e-4, pub: out};
    var k0_56: per_second {init: 10, pub: out};
    var k0_65_f: per_M2_per_second {init: 50};
    var k0_61_f: per_second {init: 5};
    var k0_16_f: per_second {init: 35};
    var k0_65_r: per_M2_per_second {init: 4500};
    var k0_61_r: per_second {init: 3};
    var k0_16_r: per_second {init: 350};
    var k0_65: per_M2_per_second {pub: out};
    var k0_61: per_second {pub: out};
    var k0_16: per_second {pub: out};
    var delta: dimensionless {init: 0.7, pub: out};
    var alpha_p: dimensionless {pub: out};
    var alpha_pp: dimensionless {init: 0, pub: out};
    var N_C: dimensionless {init: 3e6};
    var N_Avo: per_mol {init: 6.022e23};
    var area: um2 {init: 1e6};
    var C_T: umol {pub: out};
    var n: dimensionless {init: 2, pub: out};
    var z_c: dimensionless {init: -2, pub: out};
    var z_Na: dimensionless {init: 1, pub: out};
    var F: C_per_mol {init: 96485.34, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var V: volt {pub: in};
    var mu: dimensionless {pub: out};
    var Na_o: M {pub: in};
    k0_65 = sel
      case Na_o < 100e-3{M}:
        k0_65_r;
      otherwise:
        k0_65_f;
    endsel;
    k0_61 = sel
      case Na_o < 100e-3{M}:
        k0_61_r;
      otherwise:
        k0_61_f;
    endsel;
    k0_16 = sel
      case Na_o < 100e-3{M}:
        k0_16_r;
      otherwise:
        k0_16_f;
    endsel;
    alpha_p = 1{dimensionless}-delta-alpha_pp;
    C_T = 1e6{umol_per_mol}*N_C/N_Avo;
    mu = F*V/(R*T);
  enddef;

  def comp ion_concentrations as
    var V: volt {init: -150e-3, pub: out};
    var Na_i: M {init: 500e-3, pub: out};
    var Na_o: M {init: 10e-3, pub: out};
    var glucose_i: M {init: 100e-3, pub: out};
    var glucose_o: M {init: 0e-3, pub: out};
    var time: second {pub: in};
    ode(V, time) = 200e-3{volt_per_second};
  enddef;

  def comp rate_constants as
    var Na_i: M {pub: in};
    var Na_o: M {pub: in};
    var glucose_i: M {pub: in};
    var glucose_o: M {pub: in};
    var k_12: per_second {pub: out};
    var k_21: per_second {pub: out};
    var k_23: per_second {pub: out};
    var k_32: per_second {pub: out};
    var k_34: per_second {pub: out};
    var k_43: per_second {pub: out};
    var k_45: per_second {pub: out};
    var k_54: per_second {pub: out};
    var k_25: per_second {pub: out};
    var k_52: per_second {pub: out};
    var k_56: per_second {pub: out};
    var k_65: per_second {pub: out};
    var k_61: per_second {pub: out};
    var k_16: per_second {pub: out};
    var k0_12: per_M2_per_second {pub: in};
    var ks_12: per_M2_per_second {pub: out};
    var k0_21: per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    var k0_32: per_second {pub: in};
    var k0_34: per_second {pub: in};
    var k0_43: per_second {pub: in};
    var k0_45: per_second {pub: in};
    var k0_54_temp: per_M_per_second {pub: out};
    var k0_54: per_M_per_second {pub: in};
    var k0_25: per_second {pub: in};
    var k_52_temp: per_second {pub: out};
    var k0_52: per_second {pub: in};
    var k0_56: per_second {pub: in};
    var k0_65: per_M2_per_second {pub: in};
    var k0_61: per_second {pub: in};
    var k0_16: per_second {pub: in};
    var delta: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    var alpha_pp: dimensionless {pub: in};
    var C_T: umol {pub: in};
    var mu: dimensionless {pub: in};
    ks_12 = k0_12*exp(-n*alpha_p*mu/2{dimensionless});
    k_12 = ks_12*pow(Na_o, n);
    k_21 = k0_21*exp(n*z_Na*alpha_p*mu/2{dimensionless});
    k_23 = k0_23*glucose_o;
    k_32 = k0_32;
    k_34 = k0_34*exp(-(z_c+n)*delta*mu/2{dimensionless});
    k_43 = k0_43*exp((z_c+n)*delta*mu/2{dimensionless});
    k_45 = k0_45;
    k_54 = k0_54_temp*glucose_i;
    k_25 = k0_25*exp(-(z_c+n)*delta*mu/2{dimensionless});
    k_52_temp = k0_52*exp((z_c+n)*delta*mu/2{dimensionless});
    k_56 = k0_56*exp(-n*z_Na*alpha_pp*mu/2{dimensionless});
    k_65 = k0_65*pow(Na_i, n)*exp(n*z_Na*alpha_pp*mu/2{dimensionless});
    k_61 = k0_61*exp(z_c*delta*mu/2{dimensionless});
    k_16 = k0_16*exp(-z_c*delta*mu/2{dimensionless});
    k_52 = k0_12*k_25*k0_56*k0_61/(k0_21*k0_16*k0_65);
    k0_54_temp = k0_23*k_34*k_45*k_52/(k_43*k_32*k_25);
  enddef;

  def comp kinetic_equations as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C_1: umol {init: 0, pub: out};
    var C_2: umol {init: 0, pub: out};
    var C_3: umol {init: 0, pub: out};
    var C_4: umol {init: 0, pub: out};
    var C_5: umol {init: 0, pub: out};
    var C_6: umol {pub: out};
    var C_6_temp: umol {init: 0, pub: out};
    var C_T: umol {pub: in};
    var time: second {pub: in};
    ode(C_1, time) = k_21*C_2+k_61*C_6-(k_12+k_16)*C_1;
    ode(C_2, time) = k_12*C_1+k_32*C_3+k_52*C_5-(k_21+k_23+k_25)*C_2;
    ode(C_3, time) = k_23*C_2+k_43*C_4-(k_32+k_34)*C_3;
    ode(C_4, time) = k_34*C_3+k_54*C_5-(k_45+k_43)*C_4;
    ode(C_5, time) = k_45*C_4+k_65*C_6+k_25*C_2-(k_54+k_52+k_56)*C_5;
    ode(C_6_temp, time) = k_16*C_1+k_56*C_5-(k_61+k_65)*C_6_temp;
    C_6 = C_T-(C_1+C_2+C_3+C_4+C_5);
  enddef;

  def comp king_altman_states as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C1_sum: per_second5;
    var C2_sum: per_second5;
    var C3_sum: per_second5;
    var C4_sum: per_second5;
    var C5_sum: per_second5;
    var C6_sum: per_second5;
    var C_sum: per_second5;
    var C_T: umol {pub: in};
    var C1: umol {pub: out};
    var C2: umol {pub: out};
    var C3: umol {pub: out};
    var C4: umol {pub: out};
    var C5: umol {pub: out};
    var C6: umol {pub: out};
    C1_sum = k_21*k_32*k_43*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_25*k_34*k_45*k_56*k_61+k_23*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61;
    C2_sum = k_16*k_32*k_43*k_54*k_65+k_12*k_32*k_43*k_54*k_65+k_16*k_34*k_45*k_52*k_65+k_12*k_34*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_12*k_32*k_45*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_12*k_32*k_43*k_52*k_65+k_12*k_34*k_45*k_56*k_61+k_12*k_32*k_45*k_56*k_61+k_12*k_32*k_43*k_56*k_61+k_12*k_32*k_43*k_54*k_61+k_12*k_34*k_45*k_52*k_61+k_12*k_32*k_45*k_52*k_61+k_12*k_32*k_43*k_52*k_61;
    C3_sum = k_16*k_25*k_43*k_54*k_65+k_12*k_25*k_43*k_54*k_65+k_16*k_23*k_43*k_54*k_65+k_12*k_23*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_23*k_45*k_52*k_65+k_12*k_23*k_45*k_52*k_65+k_16*k_23*k_43*k_52*k_65+k_12*k_23*k_43*k_52*k_65+k_12*k_23*k_45*k_56*k_61+k_12*k_23*k_43*k_56*k_61+k_12*k_25*k_43*k_54*k_61+k_12*k_23*k_43*k_54*k_61+k_12*k_23*k_45*k_52*k_61+k_12*k_23*k_43*k_52*k_61;
    C4_sum = k_16*k_25*k_34*k_54*k_65+k_12*k_25*k_34*k_54*k_65+k_16*k_23*k_34*k_54*k_65+k_12*k_23*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_12*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_16*k_23*k_34*k_52*k_65+k_12*k_23*k_34*k_52*k_65+k_12*k_23*k_34*k_56*k_61+k_12*k_25*k_34*k_54*k_61+k_12*k_23*k_34*k_54*k_61+k_12*k_25*k_32*k_54*k_61+k_12*k_23*k_34*k_52*k_61;
    C5_sum = k_16*k_25*k_34*k_45*k_65+k_12*k_25*k_34*k_45*k_65+k_16*k_23*k_34*k_45*k_65+k_12*k_23*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_12*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_12*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_12*k_25*k_34*k_45*k_61+k_12*k_23*k_34*k_45*k_61+k_12*k_25*k_32*k_45*k_61+k_12*k_25*k_32*k_43*k_61;
    C6_sum = k_16*k_25*k_34*k_45*k_56+k_12*k_25*k_34*k_45*k_56+k_16*k_23*k_34*k_45*k_56+k_12*k_23*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_12*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_12*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52;
    C_sum = C1_sum+C2_sum+C3_sum+C4_sum+C5_sum+C6_sum;
    C1 = C_T*C1_sum/C_sum;
    C2 = C_T*C2_sum/C_sum;
    C3 = C_T*C3_sum/C_sum;
    C4 = C_T*C4_sum/C_sum;
    C5 = C_T*C5_sum/C_sum;
    C6 = C_T*C6_sum/C_sum;
  enddef;

  def comp NBC_current as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C_1: umol {pub: in};
    var C_2: umol {pub: in};
    var C_3: umol {pub: in};
    var C_4: umol {pub: in};
    var C_5: umol {pub: in};
    var C_6: umol {pub: in};
    var C1: umol {pub: in};
    var C2: umol {pub: in};
    var C3: umol {pub: in};
    var C4: umol {pub: in};
    var C5: umol {pub: in};
    var C6: umol {pub: in};
    var delta: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    var alpha_pp: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var F: C_per_mol {pub: in};
    var I_NaGl_pSS: uA {pub: out};
    var I_NaGl_SS: uA {pub: out};
    I_NaGl_pSS = -F*(n*z_Na*alpha_p*(k_12*C_1-k_21*C_2)+z_c*delta*(k_16*C_1-k_61*C_6)+n*z_Na*alpha_pp*(k_56*C_5-k_65*C_6));
    I_NaGl_SS = -F*(z_c*(k_16*C1-k_61*C6)+(z_c+z_Na*n)*(k_25*C2-k_52*C5)+(z_c+z_Na*n)*(k_34*C3-k_43*C4));
  enddef;

  def comp phenomonological_constants as
    var epsilon: per_second {pub: out};
    var lambda: per_M3_per_second5 {pub: out};
    var chi: M {pub: out};
    var alpha: M3 {pub: out};
    var beta: M2 {pub: out};
    var gamma: M3_per_second {pub: out};
    var phi: M_per_second {pub: out};
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var ks_12: per_M2_per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    var C_T: umol {pub: in};
    var F: C_per_mol {pub: in};
    var Na_o: M {pub: in};
    var glucose_o: M {pub: in};
    var Imax_Na: uA {pub: out};
    var Imax_gluc: uA {pub: out};
    var Khalf_Na_sq: M2 {pub: out};
    var Khalf_Na: M {pub: out};
    var Khalf_gluc: M {pub: out};
    lambda = ks_12*k0_23*k_43*k_54*k_65+ks_12*k0_23*k_34*k_54*k_65+ks_12*k0_23*k_45*k_52*k_65+ks_12*k0_23*k_43*k_52*k_65+ks_12*k0_23*k_34*k_52*k_65+ks_12*k0_23*k_34*k_45*k_65+ks_12*k0_23*k_45*k_56*k_61+ks_12*k0_23*k_43*k_56*k_61+ks_12*k0_23*k_34*k_56*k_61+ks_12*k0_23*k_43*k_54*k_61+ks_12*k0_23*k_34*k_54*k_61+ks_12*k0_23*k_45*k_52*k_61+ks_12*k0_23*k_43*k_52*k_61+ks_12*k0_23*k_34*k_52*k_61+ks_12*k0_23*k_34*k_45*k_61+ks_12*k0_23*k_34*k_45*k_56;
    chi = 1{dimensionless}/lambda*(ks_12*k_32*k_43*k_54*k_65+ks_12*k_25*k_43*k_54*k_65+ks_12*k_25*k_34*k_54*k_65+ks_12*k_25*k_32*k_54*k_65+ks_12*k_34*k_45*k_52*k_65+ks_12*k_32*k_45*k_52*k_65+ks_12*k_32*k_43*k_52*k_65+ks_12*k_25*k_34*k_45*k_65+ks_12*k_25*k_32*k_45*k_65+ks_12*k_25*k_32*k_43*k_65+ks_12*k_34*k_45*k_56*k_61+ks_12*k_32*k_45*k_56*k_61+ks_12*k_32*k_43*k_56*k_61+ks_12*k_32*k_43*k_54*k_61+ks_12*k_25*k_43*k_54*k_61+ks_12*k_25*k_34*k_54*k_61+ks_12*k_25*k_32*k_54*k_61+ks_12*k_34*k_45*k_52*k_61+ks_12*k_32*k_45*k_52*k_61+ks_12*k_32*k_43*k_52*k_61+ks_12*k_25*k_34*k_45*k_61+ks_12*k_25*k_32*k_45*k_61+ks_12*k_25*k_32*k_43*k_61+ks_12*k_25*k_34*k_45*k_56+ks_12*k_25*k_32*k_45*k_56+ks_12*k_25*k_32*k_43*k_56);
    beta = 1{dimensionless}/lambda*(k0_23*k_16*k_43*k_54*k_65+k0_23*k_16*k_34*k_54*k_65+k0_23*k_16*k_45*k_52*k_65+k0_23*k_16*k_43*k_52*k_65+k0_23*k_16*k_34*k_52*k_65+k0_23*k_16*k_34*k_45*k_65+k0_23*k_34*k_45*k_56*k_61+k0_23*k_16*k_34*k_45*k_56);
    alpha = 1{dimensionless}/lambda*(k_21*k_32*k_43*k_54*k_65+k_16*k_32*k_43*k_54*k_65+k_16*k_25*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_25*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_16*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_16*k_25*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_25*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61+k_16*k_25*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52);
    gamma = 1{dimensionless}/lambda*(k_16*k_21*k_32*k_43*k_54*k_65+k_16*k_21*k_34*k_45*k_52*k_65+k_16*k_21*k_32*k_45*k_52*k_65+k_16*k_21*k_32*k_43*k_52*k_65);
    phi = 1{dimensionless}/lambda*(-ks_12*k_25*k_34*k_45*k_56*k_61-ks_12*k_25*k_32*k_45*k_56*k_61-ks_12*k_25*k_32*k_43*k_56*k_61);
    epsilon = 1{dimensionless}/lambda*(-ks_12)*k0_23*k_34*k_45*k_56*k_61;
    Imax_gluc = 2{dimensionless}*F*C_T*epsilon*sqr(Na_o)/(beta+sqr(Na_o));
    Imax_Na = 2{dimensionless}*F*C_T*(phi+epsilon*glucose_o)/(chi+glucose_o);
    Khalf_gluc = (alpha+chi*sqr(Na_o))/(beta+sqr(Na_o));
    Khalf_Na_sq = (alpha+beta*glucose_o)/(chi+glucose_o);
    Khalf_Na = sqrt(Khalf_Na_sq);
  enddef;
  def map between parameters and rate_constants for
    vars k0_12 and k0_12;
    vars mu and mu;
    vars alpha_pp and alpha_pp;
    vars k0_43 and k0_43;
    vars k0_52 and k0_52;
    vars z_c and z_c;
    vars k0_25 and k0_25;
    vars k0_56 and k0_56;
    vars alpha_p and alpha_p;
    vars n and n;
    vars k0_23 and k0_23;
    vars k0_16 and k0_16;
    vars z_Na and z_Na;
    vars k0_65 and k0_65;
    vars k0_21 and k0_21;
    vars k0_32 and k0_32;
    vars k0_54 and k0_54;
    vars k0_34 and k0_34;
    vars k0_45 and k0_45;
    vars k0_61 and k0_61;
    vars delta and delta;
    vars C_T and C_T;
  enddef;
  def map between rate_constants and NBC_current for
    vars k_56 and k_56;
    vars k_16 and k_16;
    vars k_25 and k_25;
    vars k_21 and k_21;
    vars k_43 and k_43;
    vars k_61 and k_61;
    vars k_34 and k_34;
    vars k_52 and k_52;
    vars k_65 and k_65;
    vars k_12 and k_12;
  enddef;
  def map between parameters and NBC_current for
    vars F and F;
    vars alpha_pp and alpha_pp;
    vars z_c and z_c;
    vars alpha_p and alpha_p;
    vars n and n;
    vars delta and delta;
    vars z_Na and z_Na;
  enddef;
  def map between ion_concentrations and phenomonological_constants for
    vars glucose_o and glucose_o;
    vars Na_o and Na_o;
  enddef;
  def map between ion_concentrations and parameters for
    vars Na_o and Na_o;
    vars V and V;
  enddef;
  def map between parameters and king_altman_states for
    vars C_T and C_T;
  enddef;
  def map between ion_concentrations and rate_constants for
    vars glucose_o and glucose_o;
    vars Na_o and Na_o;
    vars glucose_i and glucose_i;
    vars Na_i and Na_i;
  enddef;
  def map between environment and ion_concentrations for
    vars time and time;
  enddef;
  def map between rate_constants and king_altman_states for
    vars k_23 and k_23;
    vars k_16 and k_16;
    vars k_21 and k_21;
    vars k_43 and k_43;
    vars k_61 and k_61;
    vars k_32 and k_32;
    vars k_56 and k_56;
    vars k_25 and k_25;
    vars k_45 and k_45;
    vars k_34 and k_34;
    vars k_52 and k_52;
    vars k_65 and k_65;
    vars k_12 and k_12;
    vars k_54 and k_54;
  enddef;
  def map between kinetic_equations and NBC_current for
    vars C_3 and C_3;
    vars C_2 and C_2;
    vars C_5 and C_5;
    vars C_4 and C_4;
    vars C_1 and C_1;
    vars C_6 and C_6;
  enddef;
  def map between parameters and kinetic_equations for
    vars C_T and C_T;
  enddef;
  def map between rate_constants and phenomonological_constants for
    vars k_23 and k_23;
    vars k_16 and k_16;
    vars ks_12 and ks_12;
    vars k_21 and k_21;
    vars k_43 and k_43;
    vars k_61 and k_61;
    vars k_32 and k_32;
    vars k_56 and k_56;
    vars k_25 and k_25;
    vars k_45 and k_45;
    vars k_34 and k_34;
    vars k_52 and k_52;
    vars k_65 and k_65;
    vars k_12 and k_12;
    vars k_54 and k_54;
  enddef;
  def map between king_altman_states and NBC_current for
    vars C2 and C2;
    vars C3 and C3;
    vars C5 and C5;
    vars C6 and C6;
    vars C1 and C1;
    vars C4 and C4;
  enddef;
  def map between rate_constants and kinetic_equations for
    vars k_23 and k_23;
    vars k_16 and k_16;
    vars k_21 and k_21;
    vars k_43 and k_43;
    vars k_61 and k_61;
    vars k_32 and k_32;
    vars k_56 and k_56;
    vars k_25 and k_25;
    vars k_45 and k_45;
    vars k_34 and k_34;
    vars k_52 and k_52;
    vars k_65 and k_65;
    vars k_12 and k_12;
    vars k_54 and k_54;
  enddef;
  def map between environment and kinetic_equations for
    vars time and time;
  enddef;
  def map between parameters and phenomonological_constants for
    vars F and F;
    vars C_T and C_T;
    vars k0_23 and k0_23;
  enddef;
enddef;
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C4
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_90; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_14; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_4; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma74550; name Concentration of C4 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C4 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_52
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_59; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_65; hasMultiplier 1.0; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma74550; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_23; hasMultiplier 1.0; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma66836; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_9; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_37; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_49; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma63841; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_65; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_49; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_49; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_23; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_9; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_37; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_23; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 5 to 2; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_63; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_9; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_37; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_52 is the rate of transition from state 5 to 2 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_3
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_83; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_13; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma66836; name Concentration of C3 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C3 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.delta
// description: fraction of elctrical field sensed by the empty ion binding site from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C5
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_91; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_15; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_4; name Concentration of C5 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C5 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.C_T
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_27; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_0; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_1; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; hasPhysicalDefinition http://purl.org/sig/ont/fma/fma74550; name Total concentration of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of 6-state carrier in the extracellular and intracellular (cytosol) compartmets of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.alpha_pp
// description: fraction of elctrical field sensed by the Na+ binding in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_4
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_84; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C4 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C6
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_92; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_16; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_4; name Concentration of C6 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C6 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#ion_concentrations.Na_i
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_5; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_5; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26708; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.chi
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_95; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_12
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_28; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_0; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_54; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_42; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_14; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_56; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_28; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_42; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_28; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_0; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_0; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 1 to 2; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_28; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_14; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_14; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_42; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_56; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_12 is the rate of transition from state 1 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_25
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_36; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_36; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_8; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_8; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_8; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_22; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_48; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_64; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_22; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_22; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_36; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_64; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_62; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_48; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_48; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 2 to 5; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_36; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_25 is the rate of transition from state 2 to 5 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_5
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_85; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C5 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C_T
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_64; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of 6-state carrier in the extracellular and intracellular (cytosol) compartmets of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.I_NaGl_pSS
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_93; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_14; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_52; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_53; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_52; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_53; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_52; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Current as a transfer of net charge; hasPhysicalDefinition http://identifiers.org/opb/OPB_00318
// description: presteady state current is given by sum of all translocation steps involving the transfer of a net charge in the cell membrane of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_23
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_30; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_2; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_16; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_58; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_56; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_30; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_2; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_2; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_2; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 2 to 3; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_16; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_58; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_30; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_16; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_30; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_23 is the rate of transition from state 2 to 3 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_6
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_86; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C6 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.Na_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_111; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_3; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:26708; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_61
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_62; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_12; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_68; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_68; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_50; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 6 to 1; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_26; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_40; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_12; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_26; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_66; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_12; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_50; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_40; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_26; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_40; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_50; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_12; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_61 is the rate of transition from state 6 to 1 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_34
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_32; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_4; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_4; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_60; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_32; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_18; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_32; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_60; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_4; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_46; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_46; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_46; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 3 to 4; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_58; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_32; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_18; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_18; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_4; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_34 is the rate of transition from state 3 to 4 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_32
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_53; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_3; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_31; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_3; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_3; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_17; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_17; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_17; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_31; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_3; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_59; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_59; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 3 to 2; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_57; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_31; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_32 is the rate of transition from state 3 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_56
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_60; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_44; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_38; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_66; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_10; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_10; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_44; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_24; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_38; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_10; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 5 to 6; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_38; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_64; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_24; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_44; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_66; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_24; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_56 is the rate of transition from state 5 to 6 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.Imax_gluc
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_114; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_17; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_69; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_71; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_71; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Max current of glucose; hasPhysicalDefinition http://identifiers.org/opb/OPB_00318
// description: Maximum current of glucose from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C1
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_87; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_11; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; name Concentration of C1 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C1 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_16
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_109; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_13; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_27; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_41; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_13; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_67; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_41; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_41; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_51; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_69; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_51; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_51; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_13; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_27; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_27; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_13; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_69; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 1 to 6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_16 is the rate of transition from state 1 to 6 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.Khalf_gluc
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_116; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_7; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: extracellular concentration of sugar at which the half-maximal current from intracellular (cytosol) to extracellular compartment is evoked
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_21
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_29; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_1; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_43; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_29; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_43; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_1; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_57; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_1; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_55; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_15; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_57; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_15; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Transition rate from state 2 to 1; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_15; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_29; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_29; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_43; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_1; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_21 is the rate of transition from state 2 to 1 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_45
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_34; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_6; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_34; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_34; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_60; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_62; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 4 to 5; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_62; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_20; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_6; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_20; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_34; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_6; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_20; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_6; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_45 is the arte of transition from state 4 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_43
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_55; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_5; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_47; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_61; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_5; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_19; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_33; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_33; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_5; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_33; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_61; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_47; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_47; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_19; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_5; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_19; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 4 to 3; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_59; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_43 is the rate of transition from state 4 to 3 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_16
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_26; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_16 is the rate of transition from state 1 to 6 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C2
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_88; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_12; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; name Concentration of C2 of the 6-state SGLT1 cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C2 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_32
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_31; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_32 is the rate of transition from state 3 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_56
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_38; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_56 is the rate of transition from state 5 to 6 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_1
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_81; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C1 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_54
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_57; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_7; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_7; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; name Transition rate from state 5 to 4; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_7; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_21; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_35; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_35; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_35; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_61; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_21; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_63; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_7; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_21; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_63; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_54 is the rate of transition from state 5 to 4 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.C_T
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_1; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of 6-state carrier in the extracellular and intracellular (cytosol) compartmets of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_12
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_96; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_12 is the rate of transition from state 1 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C3
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_89; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C3 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_43
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_33; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_43 is the rate of transition from state 4 to 3 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.C_2
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_82; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C2 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_65
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_61; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_11; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_25; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_65; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_39; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_45; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_39; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_39; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_11; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_67; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_11; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_25; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_11; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Transition rate from state 6 to 5; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_25; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_67; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_45; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_45; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_65 is the rate of transition from state 6 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_25
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_104; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_25 is the rate of transition from state 2 to 5 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_1
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_42; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C1 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_54
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_35; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_54 is the rate of transition from state 5 to 4 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.V
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00378
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_34
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_100; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_34 is the rate of transition from state 3 to 4 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_2
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_43; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C2 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.Na_i
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_9; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.alpha_pp
// description: fraction of elctrical field sensed by the Na+ binding in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_65
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_39; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_65 is the rate of transition from state 6 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_23
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_98; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_23 is the rate of transition from state 2 to 3 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.z_Na
// description: valence of Na+ in the extracellular compartment and intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.delta
// description: fraction of elctrical field sensed by the empty ion binding site from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_52
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_37; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_52 is the rate of transition from state 5 to 2 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_56
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_106; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_56 is the rate of transition from state 5 to 6 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_32
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_99; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_32 is the rate of transition from state 3 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_61
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_79; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_61 is the rate of transition from state 6 to 1 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.delta
// description: fraction of elctrical field sensed by the empty ion binding site from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#ion_concentrations.glucose_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_8; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of glucose in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.alpha_p
// description: fraction of elctrical field sensed by the Na+ binding in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_45
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_102; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_45 is the arte of transition from state 4 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_21
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_97; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_21 is the rate of transition from state 2 to 1 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_5
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_46; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C5 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_52
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_78; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_52 is the rate of transition from state 5 to 2 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.glucose_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_112; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of glucose in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C1
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_65; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C1 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.Na_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_10; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_54
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_103; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_54 is the rate of transition from state 5 to 4 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_6
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_47; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C6 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_61
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_40; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_61 is the rate of transition from state 6 to 1 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.alpha_p
// description: fraction of elctrical field sensed by the Na+ binding in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_43
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_101; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_43 is the rate of transition from state 4 to 3 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_T
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_49; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of 6-state carrier in the extracellular and intracellular (cytosol) compartmets of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_3
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_44; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C3 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.mu
// description: electrochemical potential which is measured in the cell membrane from extracellular to intracellur (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C3
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_67; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C3 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_52
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_105; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_52 is the rate of transition from state 5 to 2 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.Na_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_3; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_4
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_45; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C4 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_65
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_74; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_65 is the rate of transition from state 6 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C2
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_66; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C2 in the intracellular (cytosol) compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_65
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_107; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_65 is the rate of transition from state 6 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.area
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00295
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.C_6_temp
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_48; hasPhysicalDefinition http://identifiers.org/opb/OPB_00425
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_56
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_73; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_56 is the rate of transition from state 5 to 6 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.z_c
// description: valence of ion binding site on the empty carrier from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C5
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_69; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C5 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_65
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_24; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_65 is the rate of transition from state 6 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.alpha_p
// description: fraction of elctrical field sensed by the Na+ binding in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_43
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_76; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_43 is the rate of transition from state 4 to 3 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_52
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_22; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_52 is the rate of transition from state 5 to 2 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C4
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_68; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C4 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#ion_concentrations.glucose_i
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_7; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_6; part_of http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_2; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of glucose in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_34
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_75; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_34 is the rate of transition from state 3 to 4 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_21
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_72; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_21 is the rate of transition from state 2 to 1 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.z_c
// description: valence of ion binding site on the empty carrier from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.k_61
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_108; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_61 is the rate of transition from state 6 to 1 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.I_NaGl_SS
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_94; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_15; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_53; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_55; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_54; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_55; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_54; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; name Current dependedent on sugar; hasPhysicalDefinition http://identifiers.org/opb/OPB_00318
// description: steady state sugar dependent carrier current is given by sum of all possible membrane translocation in SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.C6
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_70; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of C6 in the extracellular compartment (Parent paper)
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_61
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_25; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_61 is the rate of transition from state 6 to 1 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_12
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_71; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_12 is the rate of transition from state 1 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#ion_concentrations.V
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00378
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.z_c
// description: valence of ion binding site on the empty carrier from extracellular to intracellular (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.alpha_pp
// description: fraction of elctrical field sensed by the Na+ binding in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.mu
// description: electrochemical potential which is measured in the cell membrane from extracellular to intracellur (cytosol) compartment and intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_25
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_77; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_25 is the rate of transition from state 2 to 5 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#NBC_current.k_16
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_80; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_16 is the rate of transition from state 1 to 6 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_25
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_21; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_25 is the rate of transition from state 2 to 5 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_12
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_50; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_12 is the rate of transition from state 1 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.z_Na
// description: valence of Na+ in the extracellular compartment and intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.Imax_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_113; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_16; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#mediator_68; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_9; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#sink_70; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_8; http://www.bhi.washington.edu/SemSim/14102016092756089p1300#source_70; hasMultiplier 1.0; hasPhysicalEntityReference http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_10; name Max current of Na+; hasPhysicalDefinition http://identifiers.org/opb/OPB_00318
// description: Maximum current of Na+ from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_12
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_13; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_12 is the rate of transition from state 1 to 2 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_23
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_52; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_23 is the rate of transition from state 2 to 3 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.glucose_i
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_11; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of glucose in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_23
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_15; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_23 is the rate of transition from state 2 to 3 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_34
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_54; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_34 is the rate of transition from state 3 to 4 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#parameters.z_Na
// description: valence of Na+ in the extracellular compartment and intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_34
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_17; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_34 is the rate of transition from state 3 to 4 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_21
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_51; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_21 is the rate of transition from state 2 to 1 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_45
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_56; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_45 is the arte of transition from state 4 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.Khalf_Na
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_115; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: extracellular concentration of Na+ at which the half-maximal current from intracellular (cytosol) to extracellular compartment is evoked
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_45
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_19; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_45 is the arte of transition from state 4 to 5 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_21
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_14; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_21 is the rate of transition from state 2 to 1 in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#ion_concentrations.Na_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_6; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of Na+ in the extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_16
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_63; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_16 is the rate of transition from state 1 to 6 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_56
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_23; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_56 is the rate of transition from state 5 to 6 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_32
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_16; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_32 is the rate of transition from state 3 to 2 in the extracellular compartment
// http://www.cellml.org/cellml/1.1#eskandari_2005
// li: lumen
// li: Electrogenic cotransporters
// li: cell membrane
// li: Reverse sugar transport
// li: SGLT1
// Species: Oryctolagus cuniculus (Rabbit)
// description: Article http://www.cellml.org/cellml/1.1#article; issue 1; PMCID http://www.cellml.org/cellml/16007500; volume 204; title Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter; isPartOf urn:issn:1432-1424; pageStart 23; pageEnd 32; AckInThePaper http://www.cellml.org/cellml/1.1#paper; Organisation http://www.cellml.org/cellml/1.1#the_publisher; name Springer-Verlag; Person http://www.cellml.org/cellml/1.1#abc; name a b c; Person http://www.cellml.org/cellml/1.1#xyz; name x y z; issued March, 2004; isbn 000000K; creator S. Eskandari, E.M. Wright, and D.D.F. Loo; issued 2005
// _1: Na+/glucose cotransport
// _1: Person http://www.cellml.org/cellml/1.1#author1Vcard; http://www.cellml.org/cellml/1.1#author1VcardN; FN S. Eskandari; Family Eskandari; Given S.
// _3: Person http://www.cellml.org/cellml/1.1#author3Vcard; http://www.cellml.org/cellml/1.1#author3VcardN; FN D.D.F. Loo; Family Loo; Given D.D.F.
// _2: Person http://www.cellml.org/cellml/1.1#author2Vcard; http://www.cellml.org/cellml/1.1#author2VcardN; FN E.M. Wright; Family Wright; Given E.M.
// located_in: http://identifiers.org/fma/FMA:84666
// _2: cytosol
// _3: Steady-state kinetics
// located_in: http://identifiers.org/fma/FMA:70973
// located_in: http://identifiers.org/fma/FMA:17693
// description: https://www.ncbi.nlm.nih.gov/pubmed/16007500
// located_in: http://identifiers.org/fma/FMA:17716
// isDescribedBy: https://dx.doi.org/10.1007/s00232-005-0743-x
// isInstanceOf: http://www.uniprot.org/uniprot/P11170
// Gene: SLC5A1
// title: Kinetics of the Reverse Mode of the Na+/Glucose Cotransporter
// Protein: Sodium/glucose cotransporter 1 (SGLT1)
// journal: The Journal of Membrane Biology
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_43
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_18; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_43 is the rate of transition from state 4 to 3 from intracellular (cytosol) to extracellular compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#phenomonological_constants.C_T
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_110; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of 6-state carrier in the extracellular and intracellular (cytosol) compartmets of SGLT1
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#kinetic_equations.k_16
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_41; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_16 is the rate of transition from state 1 to 6 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#king_altman_states.k_25
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_58; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_25 is the rate of transition from state 2 to 5 from extracellular to intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.k_54
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_20; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
// description: k_54 is the rate of transition from state 5 to 4 in the intracellular (cytosol) compartment
// http://www.bhi.washington.edu/SemSim/14102016092756089p1300#rate_constants.glucose_o
// isComputationalComponentFor: http://www.bhi.washington.edu/SemSim/14102016092756089p1300#property_12; physicalPropertyOf http://www.bhi.washington.edu/SemSim/14102016092756089p1300#entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
// description: Concentration of glucose in the extracellular compartment
