<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="moss_2009" cmeta:id="moss_2009">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <section id="sec_status">
        <title>Model Status</title>
        <para>This CellML model cannot be opened in COR and it cannot be run in PCEnv due to the use of vectors - something which may be included in the CellML 1.2 specification.  The way this model is written it is not ideally suited for expression in CellML.  However, we have attempted to describe the model in CellML with the hope that in the future it may be further validated and curated.</para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>ABSTRACT: In this paper, concepts from network automata are adapted and extended to model complex biological systems. Specifically, systems of nephrons, the operational units of the kidney, are modelled and the dynamics of such systems are explored. Nephron behaviour can fluctuate widely and, under certain conditions, become chaotic. However, the behaviour of the whole kidney remains remarkably stable and blood solute levels are maintained under a wide range of conditions even when many nephrons are damaged or lost. A network model is used to investigate the stability of systems of nephrons and interactions between nephrons. More sophisticated dynamics are explored including the observed oscillations in single nephron filtration rates and the development of stable ionic and osmotic gradients in the inner medulla which contribute to the countercurrent exchange mechanism. We have used the model to explore the effects of changes in input parameters including hydrostatic and osmotic pressures and concentrations of ions, such as sodium and chloride. The intrinsic nephron control, tubuloglomerular feedback, is included and the effects of coupling between nephrons are explored in two-, eight- and 72-nephron models.</para>
        <para>The original paper reference is cited below:</para>
        <para>
          A computational model for emergent dynamics in the kidney, Moss R, Kazmierczak E, Kirley M, and Harris P, 2009,
          <emphasis>Philosophical Transactions of the Royal Society A</emphasis>
          , 367, 2125-40.
          <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/19414449">PubMed ID: 19414449</ulink>
        </para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <imagedata fileref="moss_2009.png" />
            </imageobject>
          </mediaobject>
          <caption>Schematic diagram representing the model for the single-nephron tubule as a network automata, showing the edges that capture fluid flow, solute transport and tubulo-glomerular feedback.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="millimolar">
    <unit prefix="milli" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="nanoL_per_minute_cm">
    <unit prefix="nano" units="litre" />
    <unit exponent="-1.0" units="minute" />
    <unit exponent="-1.0" prefix="centi" units="metre" />
  </units>
  <units name="mmHg_L_per_gram">
    <unit units="litre" />
    <unit exponent="-1.0" units="gram" />
    <unit units="mmHg" />
  </units>
  <units name="nanoL_per_minute">
    <unit exponent="-1.0" units="minute" />
    <unit prefix="nano" units="litre" />
  </units>
  <units name="mmHg_minute_per_nanoL">
    <unit units="minute" />
    <unit units="mmHg" />
    <unit exponent="-1.0" prefix="nano" units="litre" />
  </units>
  <units name="radian_per_second">
    <unit exponent="-1.0" units="second" />
    <unit units="radian" />
  </units>
  <units name="mmHg">
    <unit units="pascal" />
  </units>
  <units name="mmHg_L2_per_gram2">
    <unit exponent="2.0" units="litre" />
    <unit exponent="-2.0" units="gram" />
    <unit units="mmHg" />
  </units>
  <units name="g_per_L">
    <unit units="gram" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="minute">
    <unit units="second" />
  </units>
  <units name="nanoL_per_minute_mmHg">
    <unit prefix="nano" units="litre" />
    <unit exponent="-1.0" units="minute" />
    <unit exponent="-1.0" units="mmHg" />
  </units>
  <component name="environment">
    <variable name="time" public_interface="out" units="minute" />
  </component>
  <component name="model_parameters">
    <variable initial_value="57.0" name="C_A" public_interface="out" units="g_per_L" />
    <variable initial_value="5.8" name="C_E" public_interface="out" units="g_per_L" />
    <variable name="t" public_interface="out" units="minute" />
    <variable name="delta_t" public_interface="out" units="minute" />
    <variable name="time" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="0.1">
      <ci type="integer">t</ci>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="0.2">
      <apply>
        <eq />
        <ci>t</ci>
        <ci>time</ci>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="0.3">
      <apply>
        <eq />
        <ci>delta_t</ci>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="minute">1.0</cn>
      </apply>
    </math>
  </component>
  <component name="R_A" cmeta:id="R_A">
    <variable name="R_A" public_interface="out" units="mmHg_minute_per_nanoL" />
    <variable initial_value="0.5" name="H_A" units="dimensionless" />
    <variable initial_value="3.3" name="gamma" units="dimensionless" />
    <variable name="epsilon" public_interface="in" units="mmHg_minute_per_nanoL" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="1">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">R_A</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <times />
          <apply>
            <selector />
            <ci type="vector">epsilon</ci>
            <ci>t</ci>
          </apply>
          <apply>
            <exp />
            <apply>
              <times />
              <ci>gamma</ci>
              <ci>H_A</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="P_G" cmeta:id="P_G">
    <variable name="P_G" public_interface="out" units="mmHg" />
    <variable initial_value="108.5" name="P_A" units="mmHg" />
    <variable initial_value="5.0" name="P_V" units="mmHg" />
    <variable initial_value="0.0298" name="R_E" units="mmHg_minute_per_nanoL" />
    <variable name="C_A" public_interface="in" units="g_per_L" />
    <variable name="C_E" public_interface="in" units="g_per_L" />
    <variable name="R_A" public_interface="in" units="mmHg_minute_per_nanoL" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="2">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">P_G</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <divide />
          <apply>
            <plus />
            <ci>P_V</ci>
            <apply>
              <times />
              <ci>P_A</ci>
              <apply>
                <divide />
                <apply>
                  <selector />
                  <ci type="vector">R_E</ci>
                  <ci>t</ci>
                </apply>
                <apply>
                  <selector />
                  <ci type="vector">R_A</ci>
                  <ci>t</ci>
                </apply>
              </apply>
              <apply>
                <divide />
                <apply>
                  <selector />
                  <ci type="vector">C_A</ci>
                  <ci>t</ci>
                </apply>
                <apply>
                  <selector />
                  <ci type="vector">C_E</ci>
                  <ci>t</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
              <apply>
                <divide />
                <apply>
                  <selector />
                  <ci type="vector">R_E</ci>
                  <ci>t</ci>
                </apply>
                <apply>
                  <selector />
                  <ci type="vector">R_A</ci>
                  <ci>t</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide />
              <apply>
                <selector />
                <ci type="vector">C_A</ci>
                <ci>t</ci>
              </apply>
              <apply>
                <selector />
                <ci type="vector">C_E</ci>
                <ci>t</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="phi" cmeta:id="phi">
    <variable name="phi" public_interface="out" units="dimensionless" />
    <variable initial_value="0.057" name="epsilon_max" units="mmHg_minute_per_nanoL" />
    <variable initial_value="0.02" name="psi" units="mmHg_minute_per_nanoL" />
    <variable initial_value="33.6" name="kappa" units="nanoL_per_minute_cm" />
    <variable initial_value="0.1" name="D_TGF" units="minute" />
    <variable initial_value="44.0" name="Na_half" units="millimolar" />
    <variable name="Na_M" public_interface="in" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="3">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">phi</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <minus />
          <ci>epsilon_max</ci>
          <apply>
            <divide />
            <ci>psi</ci>
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
              <apply>
                <exp />
                <apply>
                  <minus />
                  <apply>
                    <times />
                    <ci>kappa</ci>
                    <apply>
                      <selector />
                      <ci type="vector">Na_M</ci>
                      <apply>
                        <minus />
                        <ci>t</ci>
                        <ci>D_TGF</ci>
                      </apply>
                    </apply>
                  </apply>
                  <ci>Na_half</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="epsilon" cmeta:id="epsilon">
    <variable name="epsilon" public_interface="out" units="mmHg_minute_per_nanoL" />
    <variable initial_value="0.2" name="omega" units="radian_per_second" />
    <variable initial_value="1" name="delta" units="dimensionless" />
    <variable initial_value="0.9" name="zeta" units="dimensionless" />
    <variable name="phi" public_interface="in" units="dimensionless" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="4">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">epsilon</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <plus />
              <apply>
                <selector />
                <ci type="vector">phi</ci>
                <ci>t</ci>
              </apply>
              <apply>
                <times />
                <apply>
                  <selector />
                  <ci type="vector">epsilon</ci>
                  <ci>t</ci>
                </apply>
                <apply>
                  <plus />
                  <apply>
                    <divide />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
                      <ci>zeta</ci>
                    </apply>
                    <apply>
                      <times />
                      <ci>omega</ci>
                      <ci>delta</ci>
                    </apply>
                  </apply>
                  <apply>
                    <divide />
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
                    <apply>
                      <power />
                      <apply>
                        <times />
                        <ci>omega</ci>
                        <ci>delta</ci>
                      </apply>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide />
              <apply>
                <times />
                <apply>
                  <selector />
                  <ci type="vector">epsilon</ci>
                  <apply>
                    <minus />
                    <ci>t</ci>
                    <ci>delta</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <power />
                <apply>
                  <times />
                  <ci>omega</ci>
                  <ci>delta</ci>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
            <apply>
              <divide />
              <apply>
                <times />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
                <ci>zeta</ci>
              </apply>
              <apply>
                <times />
                <ci>omega</ci>
                <ci>delta</ci>
              </apply>
            </apply>
            <apply>
              <divide />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
              <apply>
                <power />
                <apply>
                  <times />
                  <ci>omega</ci>
                  <ci>delta</ci>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="pi_G" cmeta:id="pi_G">
    <variable name="pi_G" public_interface="out" units="mmHg" />
    <variable name="pi" public_interface="in" units="mmHg" />
    <variable name="C_A" public_interface="in" units="g_per_L" />
    <variable name="C_E" public_interface="in" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5">
      <apply>
        <eq />
        <ci>pi_G</ci>
        <apply>
          <times />
          <ci>pi</ci>
          <apply>
            <divide />
            <apply>
              <plus />
              <ci>C_A</ci>
              <ci>C_E</ci>
            </apply>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="g_per_L">2.0</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="pi" cmeta:id="pi">
    <variable name="pi" public_interface="out" units="mmHg" />
    <variable initial_value="0.1631" name="a" units="mmHg_L_per_gram" />
    <variable initial_value="0.00294" name="b" units="mmHg_L2_per_gram2" />
    <variable initial_value="58.0" name="C" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="6">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">pi</ci>
          <ci>C</ci>
        </apply>
        <apply>
          <plus />
          <apply>
            <times />
            <ci>a</ci>
            <ci>C</ci>
          </apply>
          <apply>
            <times />
            <ci>b</ci>
            <apply>
              <power />
              <ci>C</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SNGFR" cmeta:id="SNGFR">
    <variable name="SNGFR" public_interface="out" units="nanoL_per_minute" />
    <variable initial_value="2.5" name="Kf" units="nanoL_per_minute_mmHg" />
    <variable initial_value="1.0" name="P_BC" units="mmHg" />
    <variable name="P_G" public_interface="in" units="mmHg" />
    <variable name="pi_G" public_interface="in" units="mmHg" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="7">
      <apply>
        <eq />
        <ci>SNGFR</ci>
        <apply>
          <times />
          <ci>Kf</ci>
          <apply>
            <minus />
            <ci>P_G</ci>
            <apply>
              <plus />
              <ci>P_BC</ci>
              <ci>pi_G</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_I" cmeta:id="Na_I">
    <variable name="Na_I" public_interface="out" units="g_per_L" />
    <variable name="Na_R" public_interface="in" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">Na_I</ci>
          <ci>t</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <selector />
            <ci type="vector">Na_R</ci>
            <ci>t</ci>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.67</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_I" cmeta:id="H2O_I">
    <variable name="H2O_I" public_interface="out" units="dimensionless" />
    <variable name="H2O_R" public_interface="in" units="dimensionless" />
    <variable name="t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">H2O_I</ci>
          <ci>t</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <selector />
            <ci type="vector">H2O_R</ci>
            <ci>t</ci>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.67</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_D_M" cmeta:id="H2O_D_M">
    <variable name="H2O_D_M" public_interface="out" units="dimensionless" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">H2O_D_M</ci>
          <ci>t</ci>
        </apply>
        <apply>
          <selector />
          <ci type="vector">H2O_D_M</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_D_M" cmeta:id="Na_D_M">
    <variable name="Na_D_M" public_interface="out" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">Na_D_M</ci>
          <ci>t</ci>
        </apply>
        <apply>
          <selector />
          <ci type="vector">Na_D_M</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_D" cmeta:id="Na_D">
    <variable name="Na_D" public_interface="out" units="g_per_L" />
    <variable name="H2O_D" public_interface="in" units="dimensionless" />
    <variable name="H2O_M" public_interface="in" units="dimensionless" />
    <variable name="Na_M" public_interface="in" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">Na_D</ci>
          <ci>t</ci>
        </apply>
        <apply>
          <times />
          <apply>
            <divide />
            <apply>
              <selector />
              <ci type="vector">Na_M</ci>
              <ci>t</ci>
            </apply>
            <apply>
              <selector />
              <ci type="vector">H2O_M</ci>
              <apply>
                <plus />
                <ci>t</ci>
                <ci>delta_t</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <selector />
            <ci type="vector">H2O_D</ci>
            <apply>
              <plus />
              <ci>t</ci>
              <ci>delta_t</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_M" cmeta:id="Na_M">
    <variable name="Na_M" public_interface="out" units="g_per_L" />
    <variable name="H2O_M" public_interface="in" units="dimensionless" />
    <variable name="H2O_A" public_interface="in" units="dimensionless" />
    <variable name="Na_G" public_interface="in" units="g_per_L" />
    <variable name="Na_A" public_interface="in" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12a">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">Na_M</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <times />
          <apply>
            <selector />
            <ci type="vector">H2O_M</ci>
            <ci>t</ci>
          </apply>
          <apply>
            <plus />
            <apply>
              <divide />
              <apply>
                <selector />
                <ci type="vector">Na_A</ci>
                <apply>
                  <plus />
                  <ci>t</ci>
                  <ci>delta_t</ci>
                </apply>
              </apply>
              <apply>
                <selector />
                <ci type="vector">H2O_A</ci>
                <ci>t</ci>
              </apply>
            </apply>
            <ci>Na_G</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_D" cmeta:id="H2O_D">
    <variable name="H2O_D" public_interface="out" units="dimensionless" />
    <variable name="Na_D" public_interface="in" units="g_per_L" />
    <variable name="Na_D_M" public_interface="in" units="g_per_L" />
    <variable name="H2O_D_M" public_interface="in" units="dimensionless" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="13">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">H2O_D</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <times />
          <apply>
            <divide />
            <apply>
              <selector />
              <ci type="vector">Na_D</ci>
              <ci>t</ci>
            </apply>
            <apply>
              <selector />
              <ci type="vector">Na_D_M</ci>
              <ci>t</ci>
            </apply>
          </apply>
          <apply>
            <selector />
            <ci type="vector">H2O_D_M</ci>
            <ci>t</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_M" cmeta:id="H2O_M">
    <variable name="H2O_M" public_interface="out" units="dimensionless" />
    <variable name="Na_M" public_interface="in" units="g_per_L" />
    <variable name="Na_D_M" public_interface="in" units="g_per_L" />
    <variable name="H2O_D_M" public_interface="in" units="dimensionless" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="14">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">H2O_M</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <times />
          <apply>
            <divide />
            <apply>
              <selector />
              <ci type="vector">Na_M</ci>
              <ci>t</ci>
            </apply>
            <apply>
              <selector />
              <ci type="vector">Na_D_M</ci>
              <ci>t</ci>
            </apply>
          </apply>
          <apply>
            <selector />
            <ci type="vector">H2O_D_M</ci>
            <ci>t</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_A" cmeta:id="Na_A">
    <variable name="Na_A" public_interface="out" units="g_per_L" />
    <variable name="H2O_A" public_interface="in" units="dimensionless" />
    <variable name="H2O_M" public_interface="in" units="dimensionless" />
    <variable name="H2O_M_A" public_interface="in" units="dimensionless" />
    <variable name="Na_M_A" public_interface="in" units="g_per_L" />
    <variable name="Na_G" public_interface="in" units="g_per_L" />
    <variable name="t" public_interface="in" units="minute" />
    <variable name="delta_t" public_interface="in" units="minute" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15">
      <apply>
        <eq />
        <apply>
          <selector />
          <ci type="vector">Na_A</ci>
          <apply>
            <plus />
            <ci>t</ci>
            <ci>delta_t</ci>
          </apply>
        </apply>
        <apply>
          <times />
          <apply>
            <divide />
            <apply>
              <selector />
              <ci type="vector">H2O_A</ci>
              <ci>t</ci>
            </apply>
            <apply>
              <selector />
              <ci type="vector">H2O_M_A</ci>
              <apply>
                <plus />
                <ci>t</ci>
                <ci>delta_t</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus />
            <apply>
              <selector />
              <ci type="vector">Na_M_A</ci>
              <ci>t</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <selector />
                <ci type="vector">Na_G</ci>
                <ci>t</ci>
              </apply>
              <apply>
                <selector />
                <ci type="vector">H2O_M</ci>
                <ci>t</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_G" cmeta:id="Na_G">
    <variable name="Na_G" public_interface="out" units="g_per_L" />
    <variable name="Na_M" public_interface="in" units="g_per_L" />
    <variable name="Na_A" public_interface="in" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15a">
      <apply>
        <eq />
        <ci>Na_G</ci>
        <apply>
          <minus />
          <ci>Na_M</ci>
          <ci>Na_A</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_A" cmeta:id="H2O_A">
    <variable initial_value="100.0" name="H2O_A" public_interface="out" units="dimensionless" />
  </component>
  <component name="H2O_I_IF" cmeta:id="H2O_I_IF">
    <variable initial_value="100.0" name="H2O_I_IF" public_interface="out" units="dimensionless" />
  </component>
  <component name="Na_I_IF" cmeta:id="Na_I_IF">
    <variable initial_value="100.0" name="Na_I_IF" public_interface="out" units="g_per_L" />
  </component>
  <component name="Na_M_A" cmeta:id="Na_M_A">
    <variable name="Na_M_A" public_interface="out" units="g_per_L" />
    <variable name="Na_M" public_interface="in" units="g_per_L" />
    <variable name="Na_A" public_interface="in" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15b">
      <apply>
        <eq />
        <ci>Na_M_A</ci>
        <apply>
          <plus />
          <ci>Na_M</ci>
          <ci>Na_A</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_M_A" cmeta:id="H2O_M_A">
    <variable name="H2O_M_A" public_interface="out" units="dimensionless" />
    <variable name="H2O_M" public_interface="in" units="dimensionless" />
    <variable name="H2O_A" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15c">
      <apply>
        <eq />
        <ci>H2O_M_A</ci>
        <apply>
          <plus />
          <ci>H2O_M</ci>
          <ci>H2O_A</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="R_ADH" cmeta:id="R_ADH">
    <variable name="R_ADH" public_interface="out" units="g_per_L" />
    <variable initial_value="100.0" name="ADH_I" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="16">
      <apply>
        <eq />
        <ci>R_ADH</ci>
        <apply>
          <divide />
          <apply>
            <log />
            <apply>
              <times />
              <ci>ADH_I</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="dimensionless">
                1
                <sep />
                12
              </cn>
            </apply>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="R_ALD" cmeta:id="R_ALD">
    <variable name="R_ALD" public_interface="out" units="g_per_L" />
    <variable initial_value="100.0" name="ALD_I" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="17">
      <apply>
        <eq />
        <ci>R_ALD</ci>
        <apply>
          <divide />
          <apply>
            <log />
            <apply>
              <times />
              <ci>ALD_I</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="dimensionless">
                1
                <sep />
                11
              </cn>
            </apply>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3.0</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="H2O_R" cmeta:id="H2O_R">
    <variable name="H2O_R" public_interface="out" units="dimensionless" />
    <variable name="R_ADH" public_interface="in" units="g_per_L" />
    <variable name="H2O_I" public_interface="in" units="dimensionless" />
    <variable name="H2O_I_IF" public_interface="in" units="dimensionless" />
    <variable name="Na_I" public_interface="in" units="g_per_L" />
    <variable name="Na_I_IF" public_interface="in" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="18">
      <apply>
        <eq />
        <ci>H2O_R</ci>
        <apply>
          <times />
          <ci>R_ADH</ci>
          <apply>
            <minus />
            <ci>H2O_I</ci>
            <apply>
              <times />
              <ci>Na_I</ci>
              <apply>
                <divide />
                <ci>H2O_I_IF</ci>
                <ci>Na_I_IF</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Na_R" cmeta:id="Na_R">
    <variable name="Na_R" public_interface="out" units="g_per_L" />
    <variable initial_value="100.0" name="Na_max" units="g_per_L" />
    <variable name="R_ALD" public_interface="in" units="g_per_L" />
    <variable name="Na_I" public_interface="in" units="g_per_L" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="19">
      <apply>
        <eq />
        <ci>Na_R</ci>
        <apply>
          <times />
          <ci>R_ALD</ci>
          <ci>Na_max</ci>
          <ci>Na_I</ci>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="R_ADH" component_2="H2O_R" />
    <map_variables variable_1="R_ADH" variable_2="R_ADH" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="Na_M" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_A" component_2="Na_M" />
    <map_variables variable_1="H2O_A" variable_2="H2O_A" />
  </connection>
  <connection>
    <map_components component_1="Na_G" component_2="Na_M" />
    <map_variables variable_1="Na_G" variable_2="Na_G" />
  </connection>
  <connection>
    <map_components component_1="H2O_I" component_2="H2O_R" />
    <map_variables variable_1="H2O_I" variable_2="H2O_I" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="P_G" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
    <map_variables variable_1="C_A" variable_2="C_A" />
    <map_variables variable_1="C_E" variable_2="C_E" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="Na_A" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="H2O_I" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="pi_G" component_2="SNGFR" />
    <map_variables variable_1="pi_G" variable_2="pi_G" />
  </connection>
  <connection>
    <map_components component_1="Na_M_A" component_2="Na_A" />
    <map_variables variable_1="Na_M_A" variable_2="Na_M_A" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="H2O_D" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_D" component_2="Na_D" />
    <map_variables variable_1="H2O_D" variable_2="H2O_D" />
  </connection>
  <connection>
    <map_components component_1="epsilon" component_2="R_A" />
    <map_variables variable_1="epsilon" variable_2="epsilon" />
  </connection>
  <connection>
    <map_components component_1="H2O_M" component_2="Na_A" />
    <map_variables variable_1="H2O_M" variable_2="H2O_M" />
  </connection>
  <connection>
    <map_components component_1="pi" component_2="pi_G" />
    <map_variables variable_1="pi" variable_2="pi" />
  </connection>
  <connection>
    <map_components component_1="Na_I_IF" component_2="H2O_R" />
    <map_variables variable_1="Na_I_IF" variable_2="Na_I_IF" />
  </connection>
  <connection>
    <map_components component_1="Na_A" component_2="Na_M_A" />
    <map_variables variable_1="Na_A" variable_2="Na_A" />
  </connection>
  <connection>
    <map_components component_1="R_ALD" component_2="Na_R" />
    <map_variables variable_1="R_ALD" variable_2="R_ALD" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="model_parameters" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="H2O_M" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_M" component_2="Na_D" />
    <map_variables variable_1="H2O_M" variable_2="H2O_M" />
  </connection>
  <connection>
    <map_components component_1="H2O_M_A" component_2="Na_A" />
    <map_variables variable_1="H2O_M_A" variable_2="H2O_M_A" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="pi_G" />
    <map_variables variable_1="C_A" variable_2="C_A" />
    <map_variables variable_1="C_E" variable_2="C_E" />
  </connection>
  <connection>
    <map_components component_1="H2O_I_IF" component_2="H2O_R" />
    <map_variables variable_1="H2O_I_IF" variable_2="H2O_I_IF" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="phi" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="P_G" component_2="SNGFR" />
    <map_variables variable_1="P_G" variable_2="P_G" />
  </connection>
  <connection>
    <map_components component_1="Na_M" component_2="Na_G" />
    <map_variables variable_1="Na_M" variable_2="Na_M" />
  </connection>
  <connection>
    <map_components component_1="H2O_M" component_2="H2O_M_A" />
    <map_variables variable_1="H2O_M" variable_2="H2O_M" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="Na_I" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_M" component_2="Na_M" />
    <map_variables variable_1="H2O_M" variable_2="H2O_M" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="Na_D" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="epsilon" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="Na_I" component_2="Na_R" />
    <map_variables variable_1="Na_I" variable_2="Na_I" />
  </connection>
  <connection>
    <map_components component_1="H2O_R" component_2="H2O_I" />
    <map_variables variable_1="H2O_R" variable_2="H2O_R" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="Na_D_M" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_A" component_2="Na_A" />
    <map_variables variable_1="H2O_A" variable_2="H2O_A" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="H2O_D_M" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="Na_M" component_2="phi" />
    <map_variables variable_1="Na_M" variable_2="Na_M" />
  </connection>
  <connection>
    <map_components component_1="R_A" component_2="P_G" />
    <map_variables variable_1="R_A" variable_2="R_A" />
  </connection>
  <connection>
    <map_components component_1="phi" component_2="epsilon" />
    <map_variables variable_1="phi" variable_2="phi" />
  </connection>
  <connection>
    <map_components component_1="H2O_D_M" component_2="H2O_M" />
    <map_variables variable_1="H2O_D_M" variable_2="H2O_D_M" />
  </connection>
  <connection>
    <map_components component_1="Na_G" component_2="Na_A" />
    <map_variables variable_1="Na_G" variable_2="Na_G" />
  </connection>
  <connection>
    <map_components component_1="Na_M" component_2="Na_M_A" />
    <map_variables variable_1="Na_M" variable_2="Na_M" />
  </connection>
  <connection>
    <map_components component_1="Na_A" component_2="Na_G" />
    <map_variables variable_1="Na_A" variable_2="Na_A" />
  </connection>
  <connection>
    <map_components component_1="Na_D" component_2="H2O_D" />
    <map_variables variable_1="Na_D" variable_2="Na_D" />
  </connection>
  <connection>
    <map_components component_1="Na_M" component_2="Na_D" />
    <map_variables variable_1="Na_M" variable_2="Na_M" />
  </connection>
  <connection>
    <map_components component_1="Na_D_M" component_2="H2O_M" />
    <map_variables variable_1="Na_D_M" variable_2="Na_D_M" />
  </connection>
  <connection>
    <map_components component_1="Na_I" component_2="H2O_R" />
    <map_variables variable_1="Na_I" variable_2="Na_I" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="R_A" />
    <map_variables variable_1="delta_t" variable_2="delta_t" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="H2O_D_M" component_2="H2O_D" />
    <map_variables variable_1="H2O_D_M" variable_2="H2O_D_M" />
  </connection>
  <connection>
    <map_components component_1="H2O_A" component_2="H2O_M_A" />
    <map_variables variable_1="H2O_A" variable_2="H2O_A" />
  </connection>
  <connection>
    <map_components component_1="Na_M" component_2="H2O_M" />
    <map_variables variable_1="Na_M" variable_2="Na_M" />
  </connection>
  <connection>
    <map_components component_1="Na_A" component_2="Na_M" />
    <map_variables variable_1="Na_A" variable_2="Na_A" />
  </connection>
  <connection>
    <map_components component_1="Na_D_M" component_2="H2O_D" />
    <map_variables variable_1="Na_D_M" variable_2="Na_D_M" />
  </connection>
  <connection>
    <map_components component_1="Na_R" component_2="Na_I" />
    <map_variables variable_1="Na_R" variable_2="Na_R" />
  </connection>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:model="http://www.bhi.washington.edu/SemSim/14102016092758052p1300#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:bibo="http://purl.org/ontology/bibo/" xmlns:opb="http://bhi.washington.edu/OPB#" xmlns:foaf="http://xmlns.com/foaf/0.1/" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">

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  <rdf:Description rdf:about="#moss_2009">
    <bqmodel:description rdf:resource="https://www.ncbi.nlm.nih.gov/pubmed/19414449"/>
    <dcterms:journal>Philosophical Transactions of the Royal Society</dcterms:journal>
  </rdf:Description>
  
  <bibo:Article rdf:ID="article">
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    <bibo:pageStart>2125</bibo:pageStart>
    <bibo:pageEnd>2140</bibo:pageEnd>
    <dcterms:PMCID rdf:resource="19414449"/>
    <dcterms:isPartOf rdf:resource="urn:issn:0000-0000"/>
    <dcterms:isPartOf rdf:resource="#paper"/>
  </bibo:Article>

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   
  <rdf:Description rdf:about="#moss_2009">
    <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1098/rsta.2008.0313"/>
  </rdf:Description>

  <rdf:Description rdf:about="#moss_2009">
    <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1098/rsta.2008.0313"/>
  </rdf:Description>

  <rdf:Description rdf:about="#moss_2009">
    <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1098/rsta.2008.0313"/>
  </rdf:Description>
  
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  </rdf:RDF>
</model>

