<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="thomas_2000" cmeta:id="thomas_2000">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>Inner medullary lactate production and accumulation: a vasa recta model</title>
        <author>
          <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
          <affiliation>
            <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <section id="sec_status">
        <title>Model Status</title>
        <para>This CellML version of the model has been checked in COR and PCEnv and it runs in PCEnv.  The model will not run in COR because it does not contain any time derivatives - COR expects the units of the differential equations to be a function of time (not length as it is in this case).  However, COR did allow for the units to be checked and they are consistent.  The model runs in PCEnv but as yet it does not recreate the published results.  This may be due to differences in the defined set of initial conditions.  The model author has been contacted and we are currently receiving their help and advice.</para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>S. Randall Thomas here investigates the possibility that recycling of lactate produced by anaerobic glycolysis in the inner medulla of the kidney can provide sufficient of a lactate gradient to contributes significantly to the urine concentrating mechanism.</para>
        <para>Assuming (from other sources) that 20% of the glucose delivered to the inner medulla, Thomas uses a mathematical model of the inner medullary vasa recta, based on observed mass distribution and distribution of loops, to investigate a range of plausible values of lactose and glucose permeabilities, to see which values would allow a sufficient accumulation of a lactate gradient to be a significant contributor to urine concentrating ability, in different circumstances of blood flow and diuresis.</para>
        <para>The complete original paper reference is cited below:</para>
        <para>
          Inner medullary lactate production and accumulation: a vasa recta model, S. Randall Thomas, 2000,
          <emphasis>American Journal of Physiology</emphasis>
          , 279, F468-F481.
          <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=10966926&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 10966926</ulink>
        </para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>model diagram</title>
              </objectinfo>
              <imagedata fileref="thomas_2000.png" />
            </imageobject>
          </mediaobject>
          <caption>Schematic representation of the steady-state model.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="nl_min_mm">
    <unit prefix="nano" units="litre" />
    <unit exponent="-1.0" units="minute" />
    <unit exponent="-1.0" units="mm" />
  </units>
  <units name="nl_min">
    <unit prefix="nano" units="litre" />
    <unit exponent="-1.0" units="minute" />
  </units>
  <units name="per_mm">
    <unit exponent="-1.0" units="mm" />
  </units>
  <units name="mm">
    <unit prefix="milli" units="metre" />
  </units>
  <units name="minute">
    <unit units="mm" />
  </units>
  <units name="millimolar">
    <unit prefix="milli" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="pmol_min_mm">
    <unit exponent="-1.0" units="minute" />
    <unit exponent="-1.0" units="mm" />
    <unit prefix="pico" units="mole" />
  </units>
  <units name="pmol_min">
    <unit exponent="-1.0" units="minute" />
    <unit prefix="pico" units="mole" />
  </units>
  <component name="N_x">
    <variable name="N_x" public_interface="out" units="dimensionless" />
    <variable name="N_0" public_interface="in" units="dimensionless" />
    <variable name="x" public_interface="in" units="mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>N_x</ci>
        <apply>
          <times />
          <ci>N_0</ci>
          <apply>
            <exp />
            <apply>
              <minus />
              <apply>
                <times />
                <ci>ksh</ci>
                <ci>x</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_DVR_v">
    <variable initial_value="3.75" name="F_DVR_v" public_interface="out" units="nl_min" />
    <variable name="Jv" public_interface="in" units="nl_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_DVR_v</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <ci>Jv</ci>
            <apply>
              <times />
              <ci>ksh</ci>
              <ci>F_DVR_v</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_DVR_GLU">
    <variable initial_value="0.01" name="F_DVR_GLU" public_interface="out" units="pmol_min" />
    <variable name="JGLU" public_interface="in" units="pmol_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_DVR_GLU</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <ci>JGLU</ci>
            <apply>
              <times />
              <ci>ksh</ci>
              <ci>F_DVR_GLU</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_DVR_LAC">
    <variable initial_value="0.01" name="F_DVR_LAC" public_interface="out" units="pmol_min" />
    <variable name="JLAC" public_interface="in" units="pmol_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_DVR_LAC</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <ci>JLAC</ci>
            <apply>
              <times />
              <ci>ksh</ci>
              <ci>F_DVR_LAC</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_AVR_v">
    <variable initial_value="0.01" name="F_AVR_v" public_interface="out" units="nl_min" />
    <variable name="Jv" public_interface="in" units="nl_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <variable name="J_ABS_V" public_interface="in" units="nl_min_mm" />
    <variable name="F_DVR_v" public_interface="in" units="nl_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_AVR_v</ci>
        </apply>
        <apply>
          <plus />
          <ci>Jv</ci>
          <apply>
            <times />
            <ci>ksh</ci>
            <ci>F_DVR_v</ci>
          </apply>
          <ci>J_ABS_V</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_AVR_GLU">
    <variable initial_value="0.01" name="F_AVR_GLU" public_interface="out" units="pmol_min" />
    <variable name="JGLU" public_interface="in" units="pmol_min_mm" />
    <variable name="JGLY" public_interface="in" units="pmol_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <variable name="F_DVR_GLU" public_interface="in" units="pmol_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_AVR_GLU</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <plus />
            <ci>JGLU</ci>
            <apply>
              <times />
              <ci>ksh</ci>
              <ci>F_DVR_GLU</ci>
            </apply>
          </apply>
          <ci>JGLY</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="F_AVR_LAC">
    <variable initial_value="0.01" name="F_AVR_LAC" public_interface="out" units="pmol_min" />
    <variable name="JLAC" public_interface="in" units="pmol_min_mm" />
    <variable name="JGLY" public_interface="in" units="pmol_min_mm" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <variable name="x" public_interface="in" units="mm" />
    <variable name="F_DVR_LAC" public_interface="in" units="pmol_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>x</ci>
          </bvar>
          <ci>F_AVR_LAC</ci>
        </apply>
        <apply>
          <plus />
          <ci>JLAC</ci>
          <apply>
            <times />
            <ci>ksh</ci>
            <ci>F_DVR_LAC</ci>
          </apply>
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            <ci>JGLY</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="JGLU">
    <variable name="JGLU" public_interface="out" units="pmol_min_mm" />
    <variable initial_value="1.2" name="PGLU" units="nl_min_mm" />
    <variable initial_value="0.5" name="sigma_GLU" units="dimensionless" />
    <variable name="N_x" public_interface="in" units="dimensionless" />
    <variable name="Jv" public_interface="in" units="nl_min_mm" />
    <variable name="c_DVR_GLU" public_interface="in" units="millimolar" />
    <variable name="c_AVR_GLU" public_interface="in" units="millimolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>JGLU</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <ci>N_x</ci>
            <ci>PGLU</ci>
            <apply>
              <minus />
              <ci>c_DVR_GLU</ci>
              <ci>c_AVR_GLU</ci>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <minus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
              <ci>sigma_GLU</ci>
            </apply>
            <ci>Jv</ci>
            <apply>
              <divide />
              <apply>
                <plus />
                <ci>c_DVR_GLU</ci>
                <ci>c_AVR_GLU</ci>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="JLAC">
    <variable name="JLAC" public_interface="out" units="pmol_min_mm" />
    <variable initial_value="33.93" name="PLAC" units="nl_min_mm" />
    <variable initial_value="0.5" name="sigma_LAC" units="dimensionless" />
    <variable name="N_x" public_interface="in" units="dimensionless" />
    <variable name="Jv" public_interface="in" units="nl_min_mm" />
    <variable name="c_DVR_LAC" public_interface="in" units="millimolar" />
    <variable name="c_AVR_LAC" public_interface="in" units="millimolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>JLAC</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <ci>N_x</ci>
            <ci>PLAC</ci>
            <apply>
              <minus />
              <ci>c_DVR_LAC</ci>
              <ci>c_AVR_LAC</ci>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <minus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
              <ci>sigma_LAC</ci>
            </apply>
            <ci>Jv</ci>
            <apply>
              <divide />
              <apply>
                <plus />
                <ci>c_DVR_LAC</ci>
                <ci>c_AVR_LAC</ci>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="c_DVR_GLU">
    <variable name="c_DVR_GLU" public_interface="out" units="millimolar" />
    <variable name="F_DVR_GLU" public_interface="in" units="pmol_min" />
    <variable name="F_DVR_v" public_interface="in" units="nl_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>c_DVR_GLU</ci>
        <apply>
          <divide />
          <ci>F_DVR_GLU</ci>
          <ci>F_DVR_v</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="c_AVR_GLU">
    <variable name="c_AVR_GLU" public_interface="out" units="millimolar" />
    <variable name="F_AVR_GLU" public_interface="in" units="pmol_min" />
    <variable name="F_AVR_v" public_interface="in" units="nl_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>c_AVR_GLU</ci>
        <apply>
          <divide />
          <ci>F_AVR_GLU</ci>
          <ci>F_AVR_v</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="c_DVR_LAC">
    <variable name="c_DVR_LAC" public_interface="out" units="millimolar" />
    <variable name="F_DVR_LAC" public_interface="in" units="pmol_min" />
    <variable name="F_DVR_v" public_interface="in" units="nl_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>c_DVR_LAC</ci>
        <apply>
          <divide />
          <ci>F_DVR_LAC</ci>
          <ci>F_DVR_v</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="c_AVR_LAC">
    <variable name="c_AVR_LAC" public_interface="out" units="millimolar" />
    <variable name="F_AVR_LAC" public_interface="in" units="pmol_min" />
    <variable name="F_AVR_v" public_interface="in" units="nl_min" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>c_AVR_LAC</ci>
        <apply>
          <divide />
          <ci>F_AVR_LAC</ci>
          <ci>F_AVR_v</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="JGLY">
    <variable name="JGLY" public_interface="out" units="pmol_min_mm" />
    <variable name="Vmax" units="pmol_min_mm" />
    <variable initial_value="0.1" name="Km" units="millimolar" />
    <variable initial_value="0.2" name="GlyFract" units="dimensionless" />
    <variable name="F_DVR_G_0" public_interface="in" units="pmol_min" />
    <variable name="L" public_interface="in" units="mm" />
    <variable name="c_AVR_GLU" public_interface="in" units="millimolar" />
    <variable name="N_x" public_interface="in" units="dimensionless" />
    <variable name="N_0" public_interface="in" units="dimensionless" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>JGLY</ci>
        <apply>
          <times />
          <ci>N_x</ci>
          <apply>
            <divide />
            <apply>
              <times />
              <ci>Vmax</ci>
              <ci>c_AVR_GLU</ci>
            </apply>
            <apply>
              <plus />
              <ci>Km</ci>
              <ci>c_AVR_GLU</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>Vmax</ci>
        <apply>
          <times />
          <apply>
            <divide />
            <ci>ksh</ci>
            <apply>
              <times />
              <ci>N_0</ci>
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
                <apply>
                  <exp />
                  <apply>
                    <minus />
                    <apply>
                      <times />
                      <ci>ksh</ci>
                      <ci>L</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <ci>GlyFract</ci>
            <ci>F_DVR_G_0</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="J_ABS_V">
    <variable name="J_ABS_V" public_interface="out" units="nl_min_mm" />
    <variable name="kv" public_interface="in" units="nl_min_mm" />
    <variable name="N_x" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>J_ABS_V</ci>
        <apply>
          <times />
          <ci>kv</ci>
          <ci>N_x</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="kv">
    <variable name="kv" public_interface="out" units="nl_min_mm" />
    <variable initial_value="0.3" name="VolFract" units="dimensionless" />
    <variable name="F_DVR_V_0" public_interface="in" units="nl_min" />
    <variable name="L" public_interface="in" units="mm" />
    <variable name="N_0" public_interface="in" units="dimensionless" />
    <variable name="ksh" public_interface="in" units="per_mm" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>kv</ci>
        <apply>
          <times />
          <apply>
            <divide />
            <ci>ksh</ci>
            <apply>
              <times />
              <ci>N_0</ci>
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
                <apply>
                  <exp />
                  <apply>
                    <minus />
                    <apply>
                      <times />
                      <ci>ksh</ci>
                      <ci>L</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <ci>VolFract</ci>
          <ci>F_DVR_V_0</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="model_parameters">
    <variable initial_value="1.213" name="ksh" public_interface="out" units="per_mm" />
    <variable initial_value="4.0" name="L" public_interface="out" units="mm" />
    <variable initial_value="128.0" name="N_0" public_interface="out" units="dimensionless" />
    <variable initial_value="0" name="x" public_interface="out" units="mm" />
    <variable name="F_DVR_G_0" public_interface="out" units="pmol_min" />
    <variable name="F_DVR_V_0" public_interface="out" units="nl_min" />
    <variable name="Jv" public_interface="out" units="nl_min_mm" />
    <variable initial_value="10.0" name="c_DVR_GLU_0" units="millimolar" />
    <variable name="x_L" units="dimensionless" />
    <variable initial_value="4.0" name="b" units="dimensionless" />
    <variable name="F_DVR_v" public_interface="in" units="nl_min" />
    <variable name="N_x" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>Jv</ci>
        <apply>
          <times />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mm">0.3</cn>
          <apply>
            <divide />
            <ci>F_DVR_v</ci>
            <apply>
              <times />
              <ci>N_0</ci>
              <ci>b</ci>
            </apply>
          </apply>
          <ci>N_x</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>F_DVR_V_0</ci>
        <apply>
          <times />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="nl_min">3.75</cn>
          <ci>N_0</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>x_L</ci>
        <apply>
          <divide />
          <ci>x</ci>
          <ci>L</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>F_DVR_G_0</ci>
        <apply>
          <times />
          <ci>F_DVR_V_0</ci>
          <ci>c_DVR_GLU_0</ci>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="F_DVR_v" component_2="c_DVR_LAC" />
    <map_variables variable_1="F_DVR_v" variable_2="F_DVR_v" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_DVR_v" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="Jv" variable_2="Jv" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="F_AVR_v" component_2="c_AVR_LAC" />
    <map_variables variable_1="F_AVR_v" variable_2="F_AVR_v" />
  </connection>
  <connection>
    <map_components component_1="F_AVR_GLU" component_2="c_AVR_GLU" />
    <map_variables variable_1="F_AVR_GLU" variable_2="F_AVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="c_AVR_GLU" component_2="JGLY" />
    <map_variables variable_1="c_AVR_GLU" variable_2="c_AVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="J_ABS_V" component_2="F_AVR_v" />
    <map_variables variable_1="J_ABS_V" variable_2="J_ABS_V" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_GLU" component_2="F_AVR_GLU" />
    <map_variables variable_1="F_DVR_GLU" variable_2="F_DVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="JLAC" component_2="F_AVR_LAC" />
    <map_variables variable_1="JLAC" variable_2="JLAC" />
  </connection>
  <connection>
    <map_components component_1="c_AVR_GLU" component_2="JGLU" />
    <map_variables variable_1="c_AVR_GLU" variable_2="c_AVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="N_x" component_2="model_parameters" />
    <map_variables variable_1="N_x" variable_2="N_x" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="JLAC" />
    <map_variables variable_1="Jv" variable_2="Jv" />
  </connection>
  <connection>
    <map_components component_1="N_x" component_2="JGLY" />
    <map_variables variable_1="N_x" variable_2="N_x" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_v" component_2="F_AVR_v" />
    <map_variables variable_1="F_DVR_v" variable_2="F_DVR_v" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="JGLU" />
    <map_variables variable_1="Jv" variable_2="Jv" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_v" component_2="model_parameters" />
    <map_variables variable_1="F_DVR_v" variable_2="F_DVR_v" />
  </connection>
  <connection>
    <map_components component_1="c_DVR_GLU" component_2="JLAC" />
    <map_variables variable_1="c_DVR_GLU" variable_2="c_DVR_LAC" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_AVR_GLU" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="JLAC" component_2="F_DVR_LAC" />
    <map_variables variable_1="JLAC" variable_2="JLAC" />
  </connection>
  <connection>
    <map_components component_1="JGLY" component_2="F_AVR_GLU" />
    <map_variables variable_1="JGLY" variable_2="JGLY" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_LAC" component_2="F_AVR_LAC" />
    <map_variables variable_1="F_DVR_LAC" variable_2="F_DVR_LAC" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="JGLY" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="L" variable_2="L" />
    <map_variables variable_1="N_0" variable_2="N_0" />
    <map_variables variable_1="F_DVR_G_0" variable_2="F_DVR_G_0" />
  </connection>
  <connection>
    <map_components component_1="N_x" component_2="JLAC" />
    <map_variables variable_1="N_x" variable_2="N_x" />
  </connection>
  <connection>
    <map_components component_1="JGLY" component_2="F_AVR_LAC" />
    <map_variables variable_1="JGLY" variable_2="JGLY" />
  </connection>
  <connection>
    <map_components component_1="kv" component_2="J_ABS_V" />
    <map_variables variable_1="kv" variable_2="kv" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_DVR_GLU" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_AVR_v" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="Jv" variable_2="Jv" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_GLU" component_2="c_DVR_GLU" />
    <map_variables variable_1="F_DVR_GLU" variable_2="F_DVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="c_DVR_GLU" component_2="JGLU" />
    <map_variables variable_1="c_DVR_GLU" variable_2="c_DVR_GLU" />
  </connection>
  <connection>
    <map_components component_1="c_AVR_LAC" component_2="JLAC" />
    <map_variables variable_1="c_AVR_LAC" variable_2="c_AVR_LAC" />
  </connection>
  <connection>
    <map_components component_1="N_x" component_2="JGLU" />
    <map_variables variable_1="N_x" variable_2="N_x" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_v" component_2="c_DVR_GLU" />
    <map_variables variable_1="F_DVR_v" variable_2="F_DVR_v" />
  </connection>
  <connection>
    <map_components component_1="F_AVR_LAC" component_2="c_AVR_LAC" />
    <map_variables variable_1="F_AVR_LAC" variable_2="F_AVR_LAC" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="kv" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="L" variable_2="L" />
    <map_variables variable_1="N_0" variable_2="N_0" />
    <map_variables variable_1="F_DVR_V_0" variable_2="F_DVR_V_0" />
  </connection>
  <connection>
    <map_components component_1="N_x" component_2="J_ABS_V" />
    <map_variables variable_1="N_x" variable_2="N_x" />
  </connection>
  <connection>
    <map_components component_1="F_DVR_LAC" component_2="c_DVR_LAC" />
    <map_variables variable_1="F_DVR_LAC" variable_2="F_DVR_LAC" />
  </connection>
  <connection>
    <map_components component_1="F_AVR_v" component_2="c_AVR_GLU" />
    <map_variables variable_1="F_AVR_v" variable_2="F_AVR_v" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_AVR_LAC" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="N_x" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="N_0" variable_2="N_0" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="JGLU" component_2="F_DVR_GLU" />
    <map_variables variable_1="JGLU" variable_2="JGLU" />
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="F_DVR_LAC" />
    <map_variables variable_1="ksh" variable_2="ksh" />
    <map_variables variable_1="x" variable_2="x" />
  </connection>
  <connection>
    <map_components component_1="JGLU" component_2="F_AVR_GLU" />
    <map_variables variable_1="JGLU" variable_2="JGLU" />
  </connection>

  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:model="http://www.bhi.washington.edu/SemSim/14102016092758418p1300#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:bibo="http://purl.org/ontology/bibo/" xmlns:opb="http://bhi.washington.edu/OPB#" xmlns:foaf="http://xmlns.com/foaf/0.1/" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">

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  <rdf:Description rdf:about="#thomas_2000">
    <bqmodel:description rdf:resource="https://www.ncbi.nlm.nih.gov/pubmed/10966926"/>
    <dcterms:journal>The American Journal of Physiology - Renal Physiology</dcterms:journal>
  </rdf:Description>
  
  <bibo:Article rdf:ID="article">
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    <bibo:pageStart>F468</bibo:pageStart>
    <bibo:pageEnd>F481</bibo:pageEnd>
    <dcterms:PMCID rdf:resource="10966926"/>
    <dcterms:isPartOf rdf:resource="urn:issn:0000-0000"/>
    <dcterms:isPartOf rdf:resource="#paper"/>
  </bibo:Article>

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  </rdf:RDF>
</model>

