<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="weinstein_1995" cmeta:id="weinstein_1995">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>A kinetically defined Na+/H+ antiporter within a mathematical model of the rat proximal tubule</title>
        <author>
          <firstname>Jonna</firstname>
          <surname>Terkildsen</surname>
          <affiliation>
            <shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <sect1 id="sec_status">
        <title>Model Status</title>
        <para>This CellML model..........................................</para>
      </sect1>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>ABSTRACT: The luminal membrane antiporter of the proximal tubule has been represented using the kinetic formulation of E. Heinz (1978. Mechanics and Engergetics of Biological Transport. Springer-Verlag, Berlin) with the assumption of equilibrium binding and 1:1 stoichiometry. Competitive binding and transport of NH+4 is included within this model. Ion affinities and permeation velocities were selected in a least-squares fit to the kinetic parameters determined experimentally in renal membrane vesicles (Aronson, P.S., M.A. Suhm, and J. Nee. 1983. Journal of Biological Chemistry. 258:6767-6771). The modifier role of internal H+ to enhance transport beyond the expected kinetics (Aronson, P.S., J. Nee, and M. A. Suhm. 1982. Nature. 299:161-163) is represented as a velocity effect of H+ binding to a single site. This kinetic formulation of the Na+/H+ antiporter was incorporated within a model of the rat proximal tubule (Weinstein, A. M. 1994. American Journal of Physiology. 267:F237-F248) as a replacement for the representation by linear nonequilibrium thermodynamics (NET). The membrane density of the antiporter was selected to yield agreement with the rate of tubular Na+ reabsorption. Simulation of 0.5 cm of tubule predicts that the activity of the Na+/H+ antiporter is the most important force for active secretion of ammonia. Model calculations of metabolic acid-base disturbances are performed and comparison is made among antiporter representations (kinetic model, kinetic model without internal modifier, and NET formulation). It is found that the ability to sharply turn off Na+/H+ exchange in cellular alkalosis substantially eliminates the cell volume increase associated with high HCO3- conditions. In the tubule model, diminished Na+/H+ exchange in alkalosis blunts the axial decrease in luminal HCO3- and thus diminishes paracellular reabsorption of Cl-. In this way, the kinetics of the Na+/H+ antiporter could act to enhance distal delivery of Na+, Cl-, and HCO3- in acute metabolic alkalosis.</para>
        <para>The original paper reference is cited below:</para>
        <para>
          A kinetically defined Na+/H+ antiporter within a mathematical model of the rat proximal tubule, A.M. Weinstein, 1995,
          <emphasis>The Journal of General Physiology</emphasis>
          , 105, 617-641.
          <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/7658195">PubMed ID: 7658195</ulink>
        </para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>model diagram</title>
              </objectinfo>
              <imagedata fileref="weinstein_1995.png" />
            </imageobject>
          </mediaobject>
          <caption>Schematic representation of the Na+/H+ antiporter. The carrier may either be empty, X, or bound to one of three ions, Na+, H+, or NH+4, designated XA, XB, or XC. Binding is rapid, and defined by equilibrium constants Ka, Kb, and K~. The carrier or carrier-ion complex may face either the external (') or internal (") membrane surface. Tramlocation of the loaded carrier occurs according to rate coefficients Pa, Pb, and Pc. There is no translocation of empty carrier.</caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="mM">
    <unit exponent="-1.0" units="litre" />
    <unit prefix="milli" units="mole" />
  </units>
  <units name="mmol">
    <unit prefix="milli" units="mole" />
  </units>
  <units name="per_s">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="nmol">
    <unit prefix="nano" units="mole" />
  </units>
  <units name="cm2">
    <unit exponent="2.0" prefix="centi" units="metre" />
  </units>
  <units name="mmol_per_s_per_cm2">
    <unit exponent="-1.0" units="cm2" />
    <unit exponent="-1.0" units="second" />
    <unit units="mmol" />
  </units>
  <units name="M">
    <unit units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="cm">
    <unit prefix="centi" units="metre" />
  </units>
  <units name="umol">
    <unit prefix="micro" units="mole" />
  </units>
  <units name="nmol_per_s_per_cm2">
    <unit units="nmol" />
    <unit exponent="-1.0" units="cm2" />
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="mM_per_s">
    <unit units="mM" />
    <unit exponent="-1.0" units="second" />
  </units>
  <component name="environment">
    <variable name="time" public_interface="out" units="second" />
  </component>
  <component name="Concentrations">
    <variable cmeta:id="v001" initial_value="140" name="C_ext_Na" public_interface="out" units="mM" />
    <variable cmeta:id="v002" initial_value="4.95e-2" name="C_ext_H" public_interface="out" units="mM" />
    <variable cmeta:id="v003" initial_value="0.2" name="C_ext_NH4" public_interface="out" units="mM" />
    <variable cmeta:id="v004" initial_value="19.6" name="C_int_Na" public_interface="out" units="mM" />
    <variable initial_value="1e-3" name="C_int_H" public_interface="out" units="mM" />
    <variable initial_value="0.23" name="C_int_NH4" public_interface="out" units="mM" />
    <variable name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>C_ext_Na</ci>
        </apply>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM_per_s">10</cn>
      </apply>
    </math>
  </component>
  <component name="NHE3_Parameters">
    <variable initial_value="1.6e-3" name="XTxP0_NHE3_Na" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable initial_value="0.48e-3" name="XTxP0_NHE3_H" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable initial_value="1.6e-3" name="XTxP0_NHE3_NH4" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable initial_value="0.03e3" name="K_NHE3_Na" public_interface="out" units="mM" />
    <variable initial_value="72e-6" name="K_NHE3_H" public_interface="out" units="mM" />
    <variable initial_value="0.027e3" name="K_NHE3_NH4" public_interface="out" units="mM" />
  </component>
  <component name="NHE3">
    <variable name="C_ext_Na" public_interface="in" units="mM" />
    <variable name="C_ext_H" public_interface="in" units="mM" />
    <variable name="C_ext_NH4" public_interface="in" units="mM" />
    <variable name="C_int_Na" public_interface="in" units="mM" />
    <variable name="C_int_H" public_interface="in" units="mM" />
    <variable name="C_int_NH4" public_interface="in" units="mM" />
    <variable name="XTxP0_NHE3_Na" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable name="XTxP0_NHE3_H" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable name="XTxP0_NHE3_NH4" public_interface="in" units="nmol_per_s_per_cm2" />
    <variable name="XTxP_NHE3_Na" units="nmol_per_s_per_cm2" />
    <variable name="XTxP_NHE3_H" units="nmol_per_s_per_cm2" />
    <variable name="XTxP_NHE3_NH4" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="v025" name="K_NHE3_Na" public_interface="in" units="mM" />
    <variable name="K_NHE3_H" public_interface="in" units="mM" />
    <variable name="K_NHE3_NH4" public_interface="in" units="mM" />
    <variable name="alpha_ext_Na" units="dimensionless" />
    <variable name="beta_ext_H" units="dimensionless" />
    <variable name="gamma_ext_NH4" units="dimensionless" />
    <variable name="alpha_int_Na" units="dimensionless" />
    <variable name="beta_int_H" units="dimensionless" />
    <variable name="gamma_int_NH4" units="dimensionless" />
    <variable cmeta:id="v034" name="sum_NHE3" units="nmol_per_s_per_cm2" />
    <variable cmeta:id="v035" name="J_NHE3_Na" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable name="J_NHE3_H" public_interface="out" units="nmol_per_s_per_cm2" />
    <variable name="J_NHE3_NH4" public_interface="out" units="nmol_per_s_per_cm2" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>alpha_ext_Na</ci>
        <apply>
          <divide />
          <ci>C_ext_Na</ci>
          <ci>K_NHE3_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>beta_ext_H</ci>
        <apply>
          <divide />
          <ci>C_ext_H</ci>
          <ci>K_NHE3_H</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>gamma_ext_NH4</ci>
        <apply>
          <divide />
          <ci>C_ext_NH4</ci>
          <ci>K_NHE3_NH4</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>alpha_int_Na</ci>
        <apply>
          <divide />
          <ci>C_int_Na</ci>
          <ci>K_NHE3_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>beta_int_H</ci>
        <apply>
          <divide />
          <ci>C_int_H</ci>
          <ci>K_NHE3_H</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>gamma_int_NH4</ci>
        <apply>
          <divide />
          <ci>C_int_NH4</ci>
          <ci>K_NHE3_NH4</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_Na</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_Na</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_H</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>XTxP_NHE3_NH4</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>XTxP0_NHE3_NH4</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            <ci>C_int_H</ci>
          </apply>
          <apply>
            <plus />
            <ci>C_int_H</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM" type="e-notation">
              1
              <sep />
              -6
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>sum_NHE3</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>alpha_ext_Na</ci>
              <ci>beta_ext_H</ci>
              <ci>gamma_ext_NH4</ci>
            </apply>
            <apply>
              <plus />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>alpha_int_Na</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_NH4</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>alpha_int_Na</ci>
              <ci>beta_int_H</ci>
              <ci>gamma_int_NH4</ci>
            </apply>
            <apply>
              <plus />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>alpha_ext_Na</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>beta_ext_H</ci>
              </apply>
              <apply>
                <times />
                <ci>XTxP_NHE3_NH4</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_Na</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_H</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>beta_ext_H</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_H</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_H</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>beta_ext_H</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>beta_int_H</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>beta_ext_H</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>beta_int_H</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_NHE3_NH4</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_Na</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>alpha_int_Na</ci>
                <ci>gamma_ext_NH4</ci>
              </apply>
              <apply>
                <times />
                <ci>alpha_ext_Na</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>XTxP_NHE3_H</ci>
                <ci>XTxP_NHE3_NH4</ci>
              </apply>
              <ci>sum_NHE3</ci>
            </apply>
            <apply>
              <minus />
              <apply>
                <times />
                <ci>gamma_ext_NH4</ci>
                <ci>beta_int_H</ci>
              </apply>
              <apply>
                <times />
                <ci>beta_ext_H</ci>
                <ci>gamma_int_NH4</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="Concentrations" component_2="NHE3" />
    <map_variables variable_1="C_ext_H" variable_2="C_ext_H" />
    <map_variables variable_1="C_int_Na" variable_2="C_int_Na" />
    <map_variables variable_1="C_ext_NH4" variable_2="C_ext_NH4" />
    <map_variables variable_1="C_int_H" variable_2="C_int_H" />
    <map_variables variable_1="C_ext_Na" variable_2="C_ext_Na" />
    <map_variables variable_1="C_int_NH4" variable_2="C_int_NH4" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Concentrations" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="NHE3_Parameters" component_2="NHE3" />
    <map_variables variable_1="K_NHE3_NH4" variable_2="K_NHE3_NH4" />
    <map_variables variable_1="K_NHE3_Na" variable_2="K_NHE3_Na" />
    <map_variables variable_1="XTxP0_NHE3_Na" variable_2="XTxP0_NHE3_Na" />
    <map_variables variable_1="XTxP0_NHE3_H" variable_2="XTxP0_NHE3_H" />
    <map_variables variable_1="XTxP0_NHE3_NH4" variable_2="XTxP0_NHE3_NH4" />
    <map_variables variable_1="K_NHE3_H" variable_2="K_NHE3_H" />
  </connection>

  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:model="http://www.bhi.washington.edu/SemSim/12102016180057481p1300#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:bibo="http://purl.org/ontology/bibo/" xmlns:opb="http://bhi.washington.edu/OPB#" xmlns:foaf="http://xmlns.com/foaf/0.1/" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
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  <rdf:Description rdf:about="#weinstein_1995">
    <bqmodel:description rdf:resource="https://www.ncbi.nlm.nih.gov/pubmed/7658195"/>
    <dcterms:journal>The Journal of General Physiology</dcterms:journal>
  </rdf:Description>
    
  <bibo:Article rdf:ID="article">
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    <bibo:pageStart>617</bibo:pageStart>
    <bibo:pageEnd>641</bibo:pageEnd>
    <dcterms:PMCID rdf:resource="PMC2216949"/>
    <dcterms:isPartOf rdf:resource="urn:issn:0000-0000"/>
    <dcterms:isPartOf rdf:resource="#paper"/>
  </bibo:Article>

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  
  <rdf:Description rdf:about="#weinstein_1995">
    <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1085/jgp.105.5.617"/>
  </rdf:Description>

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    <rdf:Bag rdf:about="http://www.cellml.org/cellml/1.1#weinstein_1995">
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      <bqmodel:description>
        <bibo:Article rdf:about="http://www.cellml.org/cellml/1.1#article">
          <dcterms:title>A Kinetically Defined Na +/H + Antiporter within a Mathematical Model of the Rat Proximal Tubule</dcterms:title>
          <bibo:volume>105</bibo:volume>
          <dcterms:PMCID rdf:resource="http://www.cellml.org/cellml/PMC2216949" />
          <bibo:issue>5</bibo:issue>
          <dcterms:creator>Alan M. Weinstein</dcterms:creator>
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        </bibo:Article>
      </bqmodel:description>
      <ro:located_in rdf:resource="http://identifiers.org/fma/FMA:70973" />
      <dcterms:journal>The Journal of General Physiology</dcterms:journal>
      <bqmodel:description rdf:resource="https://www.ncbi.nlm.nih.gov/pubmed/7658195" />
      <dcterms:title>A Kinetically Defined Na +/H + Antiporter within a Mathematical Model of the Rat Proximal Tubule</dcterms:title>
      <rdf:type rdf:resource="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq" />
      <bqmodel:isDescribedBy rdf:resource="http://identifiers.org/doi/10.1085/jgp.105.5.617" />
    </rdf:Bag>
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  </rdf:RDF>
</model>

